 namespace _Method { #include "HHS Helper.hs_" }
 namespace _Method { #include "NYSCF_SystemLocalization\\NYSCF_SystemLocalization.hs_" }
 namespace _Method { #include "NYSCF_UtilityLibrary\\NYSCF_UtilityLibrary.hs_" }
 namespace _Method { #include "StringTokenizer\\StrTokenize.hs_" }
 namespace _Method { #include "easyCodeIILibrary\\easyCodeII_Helper.hs_" }
 namespace _Method { #include "easyCodeIILibrary\\easyCodeII_Library.hsl" }
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLTimLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLForkAndJoin\\HSL_ForkJoin.hsl" }
 namespace _Method { #include "NYSCF_SlackIntegration\\NYSCF_SlackIntegration.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "VirtualLabware\\VirtualLabware.hsl" }
 namespace _Method { #include "HSLBarcodeReader.hsl" }
#include "Layouts\\ZymoRNAExtraction_Layout_Alpaqua.res"
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "NYSCF_ScanBarcode\\NYSCF_ScanBarcode.hs_" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "NYSCF\\System3\\HSLTrcLib.hsl" }
 namespace _Method { #include "Visual_NTR_library\\Visual_NTR_library.hs_" }
 namespace _Method { #include "HSLArrLib.hsl" }
variable mod_bWorklistProcessed;
variable mod_sWorklistIntermediateBarcode;
variable mod_iCOMKenny;
variable mod_sWorklistSourceType;
variable mod_iHeaterDeviceNumber;
variable mod_sWorklistIntermediateType;
variable mod_iPromptOutput;
variable mod_sDeckLayout;
variable mod_filepathWorklist;
variable mod_sWorklistDestinationType;
variable mod_iNumberSamples;
variable mod_iHHSTimer;
variable mod_sWorklistDestinationBarcode;
variable mod_sWorklistSourceLabwareBarcode;
variable mod_iShakerDeviceNumber;
sequence mod_seqMatrixDestination_T23_P4;
sequence mod_seqMatrixSource_T23_P4;
sequence mod_seqCostar96Magstand;
sequence mod_seqBioRadSource_T23_P4;
sequence mod_seqCostar96Intermediate;
sequence mod_seqReagent_Col4_Magbeads_T16_P4;
sequence mod_seqCostar96HHS;
sequence mod_seqBioRadDestination_T23_P1;
sequence mod_seqReagent_Col7_ElutionBx_T16_P4;
variable mod_arrWorklistDetailsTokens[];
variable mod_arrSourcePlateBarcodes[];
variable mod_arrSourcePlateTypeTokens[];
variable mod_arrDestinationPlateTypes[];
variable mod_arrSourceWells[];
variable mod_arrDestinationPlateBarcodes[];
variable mod_arrSourceTubeBarcodes[];
variable mod_arrSourcePlateTypes[];
variable mod_arrDestinationPlateTypeTokens[];
variable mod_arrIntermediatePlateTypeTokens[];
variable mod_arrDestinationWells[];
dialog customDialog_1;
variable retVal_InitHHS;
variable mod_bExistingSourcePlateBarcode;
variable mod_sTableName;
variable mod_bAbortMethodConfirmation;
variable loopCounterWorklistTries;
variable mod_sSourceLabwareBarcode;
variable mod_bReagentCheck;
variable mod_iSourcePlateBarcodeCheckIndex;
variable mod_sSourceLabwareType;
variable wl_Details;
variable loopCounterWorklistTubes;
variable wl_SrcBarcode;
variable mod_bExistingTubeBarcode;
variable mod_iSourceTubeBarcodeArrayIndex;
variable mod_bExistingSourcePlateType;
variable mod_sSQLTubeBarcodes;
variable mod_iSourcePlateTypeCheckIndex;
variable mod_sSlackChannel;
variable mod_sSourceTypePositionSpecific;
variable loopCounterWorklistSourceInfo;
variable mod_sSlackIconURL;
variable wl_SrcType;
variable mod_sSQLSourcePlateBarcodeAndType;
variable temp_sWorklistTubeBarcode;
file WorkList;
variable mod_arrPotentialLabwareClosedWidth[];
variable mod_arrPotentialLabwareOpeningWidth[];
variable mod_arrPotentialLabwareType[];
variable mod_arrPotentialLabwareFixedHeight[];
variable mod_arrPotentialLabwareGripHeight[];
variable mod_arrPotentialLabwareMaxVolume[];
variable loopCounterWorklistDestinationInfo;
variable mod_bExistingDestinationPlateType;
variable mod_sSQLDestinationPlateBarcodeAndType;
variable wl_DestBarcode;
variable mod_sDestinationLabwareBarcode;
variable mod_iDestinationPlateBarcodeCheckIndex;
variable mod_bExistingDestinationPlateBarcode;
variable mod_iDestinationPlateTypeCheckIndex;
variable wl_DestType;
variable mod_sDestinationTypePositionSpecific;
variable mod_sDestinationLabwareType;
variable wl_DestWell;
variable mod_iIntermediatePlateTypeCheckIndex;
variable mod_bExistingSourceWell;
variable mod_bDestinationLabwareCheck;
variable mod_bSourceLabwareCheck;
variable wl_SrcWell;
variable mod_sSQLIntermediateBarcode;
variable mod_bExistingDestinationWell;
variable mod_sIntermediateTypePositionSpecific;
variable loopCounterWorklistIntermedType;
variable mod_sSQLSourceDestinationWells;
variable mod_bIntermediateLabwareCheck;
variable mod_sIntermediateLabwareType;
variable mod_iWellArrayComparison;
variable mod_iSourceWellIndex;
variable mod_sIntermediateLabwareBarcode;
variable wl_IntLabwareBarcode;
variable mod_iDestinationWellIndex;
variable loopCounterWorklistIntermedBarcode;
variable loopCounterWells;
variable wl_IntLabwareType;
variable mod_sSQLIntermediateType;
variable mod_sMagstandLabwareID;
variable loopCounterSequenceGeneratingWells;
variable mod_iNumberWells;
variable temp_WellID;
variable mod_sHeaterShakerLabwareID;
variable mod_sSourceLabwareID;
variable mod_sDestinationLabwareID;
variable mod_sIntermediateLabwareID;
sequence mod_seqMagstandLabwareWell;
sequence mod_seqIntermediateLabwareWell;
sequence mod_seqShakerLabwareWell;
sequence mod_seqDestinationLabwareWell;
sequence mod_seqSourceLabwareWell;
variable mod_bRequiresNormalization;
variable mod_iElutionVolume;
variable wl_ElutionVol;
variable mod_sIntToDestMappingFileKeyword;
variable mod_sMappingFileName;
variable mod_sSrcToIntMappingFileKeyword;
variable mod_iLengthSeqSourceWell;
variable SerialNumber;
variable mod_sMappingFileDirectory;
variable wl_VolumeNormBool;
variable wl_SrcToIntKeyword;
variable mod_sSQLElutionVolume;
variable mod_sSQLSrcToIntKeyword;
variable loopCounterVolBool;
variable Time;
variable loopCounterElutionVol;
variable Date;
variable loopCounterIntToDestKw;
variable loopCounterSrcToIntKw;
variable mod_sSQLVolumeNormBool;
variable mod_iLengthSeqDestinationWell;
variable wl_IntToDestKeyword;
variable mod_sSQLIntToDestKeyword;
variable mod_iAddedElutionVolume;
variable mod_sSourceLabwareTypeAbbrev;
variable mod_sDestinationLabwareTypeAbbrev;
variable mod_sIntermediateLabwareTypeAbbrev;
variable mod_iRequiredMagbindBxCol3;
variable mod_iRequiredTissueBxCol2;
variable mod_iNumberSamplesForCalc;
variable mod_iRequiredElutionBxCol7;
variable mod_iRequiredProtKCol1;
variable mod_iRequiredMagbeadsCol4;
variable mod_fEstimatedVolCol1;
variable mod_fEstimatedVolCol2;
variable mod_fEstimatedVolCol3;
variable mod_fEstimatedVolCol4;
variable mod_fEstimatedVolCol7;
dialog dialogHandle7;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
variable mod_sEasyCodeSettingsCamera;
variable mod_sEasyCodeSettingsBarcodeBiorad;
variable mod_sEasyCodeError;
variable mod_pathEasyCodeExportBase;
variable mod_sEasyCodeSettingsBarcodeMatrix;
variable mod_bEasyCodeFinished;
variable mod_retEasyCodeError;
variable loopCounterDestinationEasyCode;
variable mod_pathEasyCodeExportPictures;
variable mod_sEasyCodeRackID;
variable temp_EasyCodeItem;
variable loopCounter1;
variable mod_iDestinationMismatchChoice;
variable mod_sDestinationBarcodeEasyCode;
variable mod_arrDestinationRackErrors[];
variable mod_arrDestinationPositionNumberEasyCode[];
variable mod_arrDestinationPositionTextEasyCode[];
variable mod_arrDestinationTubeBarcodesEasyCode[];
variable mod_arrDestinationPlatePositionTextEasyCode[];
variable mod_arrDestinationPlateBarcodeEasyCode[];
variable mod_arrDestinationPlatePositionNumbersEasyCode[];
variable mod_arrDestinationPlateError[];
variable mod_sSourceBarcodeEasyCode;
variable mod_iSourceMismatchChoice;
variable loopCounterSourceEasyCode;
variable loopCounter2;
variable mod_arrSourceRackPositionNumberEasyCode[];
variable mod_arrSourcePositionNumberEasyCode[];
variable mod_arrSourceRackErrors[];
variable mod_arrSourcePositionTextEasyCode[];
variable mod_arrSourceTubeBarcodesEasyCode[];
variable mod_arrSourceRackBarcodeEasyCode[];
variable mod_arrSourcePlatePositionNumbersEasyCode[];
variable mod_arrSourcePlateError[];
variable mod_arrSourcePlatePositionTextEasyCode[];
variable mod_arrSourcePlateBarcodeEasyCode[];
variable mod_arrSourceRackPositionTextEasyCode[];
sequence mod_seqBiohazWaste;
sequence mod_seqTipWaste;
sequence mod_seqLiquidWaste;
variable temp_SourceTubeBarcodeWell;
variable loopCounterTubePositionMatch;
variable mod_bMisplacedTubePrompt;
variable mod_sSQLTubeBCSourceWellMatch;
variable mod_bUnexpectedTubePrompt;
variable mod_bWorklistTubeBCPresentEasyCode;
variable mod_arrUnexpectedTube[];
variable mod_arrExpectedTubePosition[];
variable mod_arrUnexpectedTubePosition[];
variable mod_arrFoundTubePosition[];
variable mod_iDestinationGripClosedWidth;
variable mod_iIntermediateGripClosedWidth;
variable mod_iDestinationGripOpenWidth;
variable mod_iIntermediateGripOpenWidth;
variable mod_iIntermediateGripHeight;
variable mod_iSourceGripOpenWidth;
variable mod_iPotentialDestinationLabwareTypeIndex;
variable mod_iDestinationGripHeight;
variable mod_iSourceGripClosedWidth;
variable mod_iPotentialSourceLabwareTypeIndex;
variable mod_iSourceGripHeight;
variable mod_iPotentialIntermediateLabwareTypeIndex;
sequence mod_seqCostar96Kenny;
variable mod_fTimerElapsedShake;
timer timerShake10min;
variable mod_iBeadSeparationTime;
variable loopCounter1_5;
variable mod_fTimerElapsedBeadSeparation;
timer timerBeadSeparation;
variable mod_fTimerElapsedHeater;
variable loopCounterStep1_17;
variable fork_Preheat;
timer timerHeater;
variable loopCounter1_19;
variable loopCounterIntToDestMapIndex;
variable mod_arrSourceTubeErrors[];
variable mod_iUnexpectedTubeDecision;
variable loopCounterIntToMagMapIndex;
variable mod_arrScannedDestinationTubeBarcodes[];
variable mod_iScannedDestinationTubes;
variable mod_filepathProgress;
variable mod_filepathSuccess;
variable mod_filepathError;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
dialog dialogHandle_12;
dialog dialogHandle_13;
variable mod_arrDestinationRackSidePositionTextEasyCode[];
variable mod_arrDestinationRackSideErrors[];
variable mod_arrDestinationRackSidePositionNumberEasyCode[];
variable mod_arrDestinationRackSideBarcodeEasyCode[];
variable mod_iMixElutionVolume;
variable mod_iMagbeadMixVol;
dialog dialogHandle_14;
dialog dialogHandle_15;
variable mod_fEstimatedVolBiohaz;
variable mod_iRackGripHeight;
variable mod_iRackGripWidthOpen;
variable mod_iRackGripWidthClosed;
variable mod_bResumeMethod;
dialog dialogHandle_16;
dialog dialogHandle_17;
dialog dialogHandle_18;
variable loopEasyCodeSimulation;
variable mod_bSimulationMode;
variable mod_sSimulatedBarcode;
variable mod_sMagbeadMixPattern;
variable temp_IntermediateWellNum;
variable temp_DestinationWellNum;
variable loopCounter4;
sequence mod_seqMagbeadMix;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
dialog dialogHandle_22;
dialog dialogHandle_23;
dialog dialogHandle_24;
variable mod_bHeadMix;
variable loopCounterTipStaging;
variable mod_sTipStagingLabware;
variable temp_iTipStagingPosition;
variable temp_TipStagingPosition;
variable temp_sTipStagingPosition;
sequence mod_seqTipStagingPattern;
variable mod_iSampleModulus;
global device ML_STAR ("Layouts\\ZymoRNAExtraction_Layout_Alpaqua.lay", "ML_STAR", hslTrue);
variable mod_iRequiredWash1;
variable mod_iRequiredWash2;
variable mod_iRequiredEthanol;
sequence mod_seqReagent_Ethanol;
sequence mod_seqReagent_MagbeadWash1;
sequence mod_seqReagent_MagbeadWash2;
variable mod_iSingleChannelVolumeQuery;
variable mod_iTipsRequiredForSampleVolumeQuery;
variable mod_sTipsRequiredForSampleVolumeQuery;
variable mod_iUsedSamplePositions;
variable mod_sSingleChannelVolumeQuery;
variable mod_iTotalSamplePositions;
variable mod_iRemainingSamplePositions;
variable SampleVolumeLoopCounter;
variable mod_fMeasuredSampleVolume;
variable mod_arrSampleVolumeMeasurements[];
variable OutlierSampleVolumeLoopCounter;
variable mod_iNumberSampleVolumeMeasurements;
variable mod_iRunningSampleVolumeTotal;
variable mod_fSampleVolumeSTD;
variable mod_fSampleVolumeMean;
variable mod_fSampleVolumeLower;
variable mod_fSampleVolumeUpper;
variable mod_iSampleVolumeSize;
dialog dialogHandle1;
dialog dialogHandle_25;
variable OutlierLoopCounter;
variable mod_iSampleItem;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    HHS_HELPER::_InitLibrary();
    NYSCF_SYSTEMLOCALIZATION::_InitLibrary();
    NYSCF_UTILITYLIBRARY::_InitLibrary();
    STRTOKENIZE::_InitLibrary();
    EASYCODEII_HELPER::_InitLibrary();
    NYSCF_SCANBARCODE::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    mod_iCOMKenny = Translate("COM4");
    mod_iHeaterDeviceNumber = 1;
    mod_iShakerDeviceNumber = 0;
    mod_iHHSTimer = 300;
    mod_sEasyCodeSettingsCamera = Translate("System12_Matrix_08082022");
    mod_sEasyCodeSettingsBarcodeMatrix = Translate("System12_Matrix_08082022");
    mod_sEasyCodeSettingsBarcodeBiorad = Translate("System12_Biorad_08242022");
    mod_pathEasyCodeExportBase = Translate("C:\\EasyCodeData\\zymo\\");
    mod_sEasyCodeError = Translate("");
    mod_bEasyCodeFinished = 0;
    mod_iBeadSeparationTime = 120;
    mod_filepathWorklist = Translate("C:\\Users\\Matthew\\Downloads\\DNA_Sys12_20220812_MRACKTEST_EXAMPLE_matrix2_16.csv");
    mod_sDeckLayout = Translate("C:\\Program Files (x86)\\HAMILTON\\Methods\\NYSCF\\System12\\DeckLayouts\\Sys12_ZymoDNAExtraction (2).png");
    mod_bWorklistProcessed = 0;
    mod_iPromptOutput = Translate("");
    mod_iNumberSamples = 0;
    mod_sWorklistSourceType = Translate("");
    mod_sWorklistSourceLabwareBarcode = Translate("");
    mod_sWorklistIntermediateType = Translate("");
    mod_sWorklistIntermediateBarcode = Translate("");
    mod_sWorklistDestinationType = Translate("");
    mod_sWorklistDestinationBarcode = Translate("");
    mod_iSourceTubeBarcodeArrayIndex = 0;
    mod_iSourcePlateBarcodeCheckIndex = 0;
    mod_iSourcePlateTypeCheckIndex = 0;
    mod_iIntermediatePlateTypeCheckIndex = 0;
    mod_iDestinationPlateBarcodeCheckIndex = 0;
    mod_iDestinationPlateTypeCheckIndex = 0;
    mod_iSourceWellIndex = 0;
    mod_iDestinationWellIndex = 0;
    mod_iPotentialSourceLabwareTypeIndex = 0;
    mod_iPotentialIntermediateLabwareTypeIndex = 0;
    mod_iPotentialDestinationLabwareTypeIndex = 0;
    Date = Translate("");
    Time = Translate("");
    mod_arrSourcePlateBarcodes.SetSize(0);
    mod_arrSourcePlateTypes.SetSize(0);
    mod_arrSourceTubeBarcodes.SetSize(0);
    mod_arrSourceWells.SetSize(0);
    mod_arrDestinationPlateBarcodes.SetSize(0);
    mod_arrDestinationPlateTypes.SetSize(0);
    mod_arrDestinationWells.SetSize(0);
    mod_arrWorklistDetailsTokens.SetSize(0);
    mod_arrSourcePlateTypeTokens.SetSize(0);
    mod_arrIntermediatePlateTypeTokens.SetSize(0);
    mod_arrDestinationPlateTypeTokens.SetSize(0);
    mod_arrScannedDestinationTubeBarcodes.SetSize(0);
    SeqRemoveAll(mod_seqReagent_Col4_Magbeads_T16_P4);
    SeqCopySequence(mod_seqReagent_Col4_Magbeads_T16_P4, ML_STAR.Eppendorf_Res_Col4);
    SeqRemoveAll(mod_seqReagent_Ethanol);
    SeqCopySequence(mod_seqReagent_Ethanol, ML_STAR.rgt_cont_60ml_BC_A00_Ethanol);
    SeqRemoveAll(mod_seqReagent_MagbeadWash1);
    SeqCopySequence(mod_seqReagent_MagbeadWash1, ML_STAR.rgt_cont_60ml_BC_A00_MagbeadWash1);
    SeqRemoveAll(mod_seqReagent_MagbeadWash2);
    SeqCopySequence(mod_seqReagent_MagbeadWash2, ML_STAR.rgt_cont_60ml_BC_A00_MagbeadWash2);
    SeqRemoveAll(mod_seqBioRadDestination_T23_P1);
    SeqCopySequence(mod_seqBioRadDestination_T23_P1, ML_STAR.BioRad_96_VB_L_HSP9601_0002);
    SeqRemoveAll(mod_seqBioRadSource_T23_P4);
    SeqCopySequence(mod_seqBioRadSource_T23_P4, ML_STAR.BioRad_96_VB_L_HSP9601_0001);
    SeqRemoveAll(mod_seqMatrixDestination_T23_P4);
    SeqCopySequence(mod_seqMatrixDestination_T23_P4, ML_STAR.Matrix_96_Cryo_L_3740_0002);
    SeqRemoveAll(mod_seqMatrixSource_T23_P4);
    SeqCopySequence(mod_seqMatrixSource_T23_P4, ML_STAR.Matrix_96_Cryo_L_3740_0001);
    SeqRemoveAll(mod_seqCostar96Intermediate);
    SeqCopySequence(mod_seqCostar96Intermediate, ML_STAR.Cos_96_DW_RB_L_3958_0001);
    SeqRemoveAll(mod_seqCostar96Magstand);
    SeqCopySequence(mod_seqCostar96Magstand, ML_STAR.Cos_96_DW_RB_L_3958_0002);
    SeqRemoveAll(mod_seqCostar96HHS);
    SeqCopySequence(mod_seqCostar96HHS, ML_STAR.Cos_96_DW_RB_L_3958_0003);
    SeqRemoveAll(mod_seqCostar96Kenny);
    SeqCopySequence(mod_seqCostar96Kenny, ML_STAR.Cos_96_DW_RB_L_3958_0004);
    SeqRemoveAll(mod_seqBiohazWaste);
    SeqCopySequence(mod_seqBiohazWaste, ML_STAR.Integra_Res_96_L_6327_8Ch_0001);
    SeqRemoveAll(mod_seqLiquidWaste);
    SeqCopySequence(mod_seqLiquidWaste, ML_STAR.LiquidWasteSash);
    SeqRemoveAll(mod_seqTipWaste);
    SeqCopySequence(mod_seqTipWaste, ML_STAR.WasteAroundLW);
    mod_arrPotentialLabwareType.SetSize(0);
    mod_arrPotentialLabwareType.AddAsLast(Translate("Matrix_96_Cryo"));
    mod_arrPotentialLabwareType.AddAsLast(Translate("BioRad_96_VB"));
    mod_arrPotentialLabwareType.AddAsLast(Translate("Cos_96_DW_RB"));
    mod_arrPotentialLabwareGripHeight.SetSize(0);
    mod_arrPotentialLabwareGripHeight.AddAsLast(20);
    mod_arrPotentialLabwareGripHeight.AddAsLast(9);
    mod_arrPotentialLabwareGripHeight.AddAsLast(16);
    mod_arrPotentialLabwareFixedHeight.SetSize(0);
    mod_arrPotentialLabwareFixedHeight.AddAsLast(5);
    mod_arrPotentialLabwareFixedHeight.AddAsLast(3);
    mod_arrPotentialLabwareFixedHeight.AddAsLast(4.5);
    mod_arrPotentialLabwareOpeningWidth.SetSize(0);
    mod_arrPotentialLabwareOpeningWidth.AddAsLast(88);
    mod_arrPotentialLabwareOpeningWidth.AddAsLast(88);
    mod_arrPotentialLabwareOpeningWidth.AddAsLast(88);
    mod_arrPotentialLabwareClosedWidth.SetSize(0);
    mod_arrPotentialLabwareClosedWidth.AddAsLast(83);
    mod_arrPotentialLabwareClosedWidth.AddAsLast(82);
    mod_arrPotentialLabwareClosedWidth.AddAsLast(80);
    mod_arrPotentialLabwareMaxVolume.SetSize(0);
    mod_arrPotentialLabwareMaxVolume.AddAsLast(1500);
    mod_arrPotentialLabwareMaxVolume.AddAsLast(260);
    mod_arrPotentialLabwareMaxVolume.AddAsLast(2000);
    mod_iRackGripHeight = 5;
    mod_iRackGripWidthOpen = 92;
    mod_iRackGripWidthClosed = 82;
    NYSCF_SYSTEMLOCALIZATION::GetSoundFilepaths(mod_filepathError, mod_filepathProgress, mod_filepathSuccess);
    if(0){
      NYSCF_SYSTEMLOCALIZATION::GetSlackParameters(mod_sSlackChannel, mod_sSlackIconURL);
      NYSCF_SlackIntegration::SetIconUrl(mod_sSlackIconURL);
      NYSCF_SlackIntegration::TestComAvailability();
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    HSLBarcodeReader::SetComPort(mod_iCOMKenny);
    retVal_InitHHS = HHS_HELPER::Init_HHS_STAR(ML_STAR, 1, mod_iShakerDeviceNumber);
    mod_bSimulationMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if(0){
      NYSCF_UTILITYLIBRARY::DisplayDeckLayout(mod_sDeckLayout);
      TipCount::Edit2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000ulHighVolumeTip"), ML_STAR, 9999);
      TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000ulHighVolumeTip"), ML_STAR);
      TipCount::Read2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000ulHighVolumeTip"), ML_STAR);
      TipCount::Edit2(ML_STAR.MlStar300ulStandardVolumeTip, Translate("300ulStandardVolumeTip"), ML_STAR, 9999);
      TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTip, Translate("300ulStandardVolumeTip"), ML_STAR);
      TipCount::Read2(ML_STAR.MlStar300ulStandardVolumeTip, Translate("300ulStandardVolumeTip"), ML_STAR);
    }
    {
      loopCounterWorklistTries = 0;
      while (mod_bWorklistProcessed != 1)
      {
        loopCounterWorklistTries = loopCounterWorklistTries + 1;
        customDialog_1.InitCustomDialog("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");
        customDialog_1.SetCustomDialogProperty( "path1.Path", mod_filepathWorklist );
        customDialog_1.ShowCustomDialog();
        mod_iPromptOutput = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
        mod_filepathWorklist = customDialog_1.GetCustomDialogProperty( "path1.Path" );
        mod_bReagentCheck = customDialog_1.GetCustomDialogProperty( "checkBox1.IsChecked" );
        mod_bResumeMethod = customDialog_1.GetCustomDialogProperty( "checkBox2.IsChecked" );
        mod_bHeadMix = customDialog_1.GetCustomDialogProperty( "checkBox3.IsChecked" );
        if (mod_iPromptOutput == 2)
        {
          dialogHandle_5.SetOutput(Translate("Are you sure you want to abort the method?"));
          if( 0 == dialogHandle_5.PlaySound(mod_filepathError) )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          mod_bAbortMethodConfirmation = dialogHandle_5.ShowOutput(Translate("Are you sure??"), hslYesNo | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_5.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          if (mod_bAbortMethodConfirmation == 6)
          {
            abort;
          }
        }
        mod_sTableName = NYSCF_UTILITYLIBRARY::GenerateTableName(mod_filepathWorklist);
        MECC::TraceComment(Translate("--------------------------------------------------------------\n\nGetting Source Tube barcodes from worklist\n\n--------------------------------------------------------------"));
        mod_sSQLTubeBarcodes = StrConcat12(Translate("SELECT Details FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'DNA' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        WorkList.AddField("Details", wl_Details, hslString, 255);
        WorkList.SetDelimiter(hslCSVDelimited);
        if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLTubeBarcodes) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounterWorklistTubes = 0;
          while (
             (WorkList.Eof() == 0)
          )
          {
            loopCounterWorklistTubes = loopCounterWorklistTubes + 1;
            if( 0 == WorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            STRTOKENIZE::StrTokenize(wl_Details, Translate("|"), mod_arrWorklistDetailsTokens, 0);
            temp_sWorklistTubeBarcode = mod_arrWorklistDetailsTokens.ElementAt( 2 -1);
            mod_bExistingTubeBarcode = APPSLIB::ArrayLookup(mod_arrSourceTubeBarcodes, temp_sWorklistTubeBarcode, mod_iSourceTubeBarcodeArrayIndex);
            if (mod_bExistingTubeBarcode == 0)
            {
              mod_arrSourceTubeBarcodes.AddAsLast(temp_sWorklistTubeBarcode);
            }
            else
            {
              dialogHandle_6.SetOutput(Translate("Duplicate tube barcodes found in worklist"), "\n", Translate(""), "\n", Translate("Press 'Cancel' to abort the method."));
              if( 0 == dialogHandle_6.PlaySound(mod_filepathError) )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              mod_bAbortMethodConfirmation = dialogHandle_6.ShowOutput(Translate("Duplicate tubes found in rack"), hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_6.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              if (mod_bAbortMethodConfirmation == 6)
              {
                abort;
              }
              else
              {
                mod_arrSourceTubeBarcodes.AddAsLast(temp_sWorklistTubeBarcode);
              }
            }
          }
        }
        if( 0 != WorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WorkList.RemoveFields();
        mod_iNumberSamples=mod_arrSourceTubeBarcodes.GetSize();
        MECC::TraceComment(Translate("--------------------------------------------------------------\n\nGetting Source Plate/Rack Barcode and Type from worklist\n\n--------------------------------------------------------------"));
        mod_sSQLSourcePlateBarcodeAndType = StrConcat12(Translate("SELECT SourcePlateBarcode, SourcePlateType FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'DNA' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        WorkList.AddField("SourcePlateBarcode", wl_SrcBarcode, hslString, 255);
        WorkList.AddField("SourcePlateType", wl_SrcType, hslString, 255);
        WorkList.SetDelimiter(hslCSVDelimited);
        if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLSourcePlateBarcodeAndType) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounterWorklistSourceInfo = 0;
          while (
             (WorkList.Eof() == 0)
          )
          {
            loopCounterWorklistSourceInfo = loopCounterWorklistSourceInfo + 1;
            if( 0 == WorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            mod_bExistingSourcePlateBarcode = APPSLIB::ArrayLookup(mod_arrSourcePlateBarcodes, wl_SrcBarcode, mod_iSourcePlateBarcodeCheckIndex);
            if (mod_bExistingSourcePlateBarcode == 0)
            {
              mod_arrSourcePlateBarcodes.AddAsLast(wl_SrcBarcode);
            }
            mod_bExistingSourcePlateType = APPSLIB::ArrayLookup(mod_arrSourcePlateTypes, wl_SrcType, mod_iSourcePlateTypeCheckIndex);
            if (mod_bExistingSourcePlateType == 0)
            {
              mod_arrSourcePlateTypes.AddAsLast(wl_SrcType);
            }
          }
        }
        if( 0 != WorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WorkList.RemoveFields();
        mod_sSourceLabwareBarcode = mod_arrSourcePlateBarcodes.ElementAt( 1 -1);
        mod_sSourceLabwareType = mod_arrSourcePlateTypes.ElementAt( 1 -1);
        STRTOKENIZE::StrTokenize(mod_sSourceLabwareType, Translate("_L_"), mod_arrSourcePlateTypeTokens, 0);
        mod_sSourceLabwareTypeAbbrev = mod_arrSourcePlateTypeTokens.ElementAt( 1 -1);
        mod_bSourceLabwareCheck = APPSLIB::ArrayLookup(mod_arrPotentialLabwareType, mod_sSourceLabwareTypeAbbrev, mod_iSourcePlateTypeCheckIndex);
        if (mod_bSourceLabwareCheck != 1)
        {
          dialogHandle_7.SetOutput(mod_sSourceLabwareType, "\n", Translate("not defined in method"), "\n");
          if( 0 == dialogHandle_7.PlaySound(mod_filepathError) )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_7.ShowOutput(Translate("Labware not defined in method"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_7.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (mod_sSourceLabwareType == "Matrix_96_Cryo_L_3740")
        {
          mod_sSourceTypePositionSpecific = APPSLIB::SequenceGetLabwareId(mod_seqMatrixSource_T23_P4);
          STCC::SetElementBarcode(ML_STAR, "Matrix_96_Cryo_L_3740_0001", "", mod_sSourceLabwareBarcode);
          mod_sSourceLabwareID = SeqGetLabwareId(ML_STAR.Matrix_96_Cryo_L_3740_0001);
        }
        if (mod_sSourceLabwareType == "BioRad_96_VB_L_HSP9601")
        {
          mod_sSourceTypePositionSpecific = APPSLIB::SequenceGetLabwareId(mod_seqBioRadSource_T23_P4);
          STCC::SetElementBarcode(ML_STAR, "BioRad_96_VB_L_HSP9601_0001", "", mod_sSourceLabwareBarcode);
          mod_sSourceLabwareID = SeqGetLabwareId(ML_STAR.BioRad_96_VB_L_HSP9601_0001);
        }
        MECC::TraceComment(Translate("--------------------------------------------------------------\n\nGetting Intermediate plate barcode from worklist\n\n--------------------------------------------------------------"));
        mod_sSQLIntermediateType = StrConcat12(Translate("SELECT SourcePlateBarcode FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'IntermediateLabwareType' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        WorkList.AddField("SourcePlateBarcode", wl_IntLabwareType, hslString, 255);
        WorkList.SetDelimiter(hslCSVDelimited);
        if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLIntermediateType) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounterWorklistIntermedType = 0;
          while (
             (WorkList.Eof() == 0)
          )
          {
            loopCounterWorklistIntermedType = loopCounterWorklistIntermedType + 1;
            if( 0 == WorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != WorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WorkList.RemoveFields();
        mod_sIntermediateLabwareType = wl_IntLabwareType;
        mod_sSQLIntermediateBarcode = StrConcat12(Translate("SELECT SourcePlateBarcode FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'IntermediatePlateBarcode' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        WorkList.AddField("SourcePlateBarcode", wl_IntLabwareBarcode, hslString, 255);
        WorkList.SetDelimiter(hslCSVDelimited);
        if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLIntermediateBarcode) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounterWorklistIntermedBarcode = 0;
          while (
             (WorkList.Eof() == 0)
          )
          {
            loopCounterWorklistIntermedBarcode = loopCounterWorklistIntermedBarcode + 1;
            if( 0 == WorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != WorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WorkList.RemoveFields();
        mod_sIntermediateLabwareBarcode = wl_IntLabwareBarcode;
        STRTOKENIZE::StrTokenize(mod_sIntermediateLabwareType, Translate("_L_"), mod_arrIntermediatePlateTypeTokens, 0);
        mod_sIntermediateLabwareTypeAbbrev = mod_arrIntermediatePlateTypeTokens.ElementAt( 1 -1);
        mod_bIntermediateLabwareCheck = APPSLIB::ArrayLookup(mod_arrPotentialLabwareType, mod_sIntermediateLabwareTypeAbbrev, mod_iIntermediatePlateTypeCheckIndex);
        if (mod_bIntermediateLabwareCheck != 1)
        {
          dialogHandle_8.SetOutput(mod_sIntermediateLabwareType, "\n", Translate("not defined in method"), "\n");
          if( 0 == dialogHandle_8.PlaySound(mod_filepathError) )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_8.ShowOutput(Translate("Labware not defined in method"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_8.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (mod_sIntermediateLabwareType == "Cos_96_DW_RB_L_3958")
        {
          mod_sIntermediateTypePositionSpecific = APPSLIB::SequenceGetLabwareId(mod_seqCostar96Intermediate);
          STCC::SetElementBarcode(ML_STAR, "Cos_96_DW_RB_L_3958_0001", "", mod_sIntermediateLabwareBarcode);
          STCC::SetElementBarcode(ML_STAR, "Cos_96_DW_RB_L_3958_0002", "", mod_sIntermediateLabwareBarcode);
          mod_sIntermediateLabwareID = SeqGetLabwareId(ML_STAR.Cos_96_DW_RB_L_3958_0001);
          mod_sMagstandLabwareID = SeqGetLabwareId(ML_STAR.Cos_96_DW_RB_L_3958_0002);
          mod_sHeaterShakerLabwareID = SeqGetLabwareId(ML_STAR.Cos_96_DW_RB_L_3958_0003);
        }
        MECC::TraceComment(Translate("--------------------------------------------------------------\n\nGetting Destination plate/rack barcode and Type from worklist\n\n--------------------------------------------------------------"));
        mod_sSQLDestinationPlateBarcodeAndType = StrConcat12(Translate("SELECT DestinationPlateBarcode, DestinationPlateType FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'DNA' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        WorkList.AddField("DestinationPlateBarcode", wl_DestBarcode, hslString, 255);
        WorkList.AddField("DestinationPlateType", wl_DestType, hslString, 255);
        WorkList.SetDelimiter(hslCSVDelimited);
        if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLDestinationPlateBarcodeAndType) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounterWorklistDestinationInfo = 0;
          while (
             (WorkList.Eof() == 0)
          )
          {
            loopCounterWorklistDestinationInfo = loopCounterWorklistDestinationInfo + 1;
            if( 0 == WorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            mod_bExistingDestinationPlateBarcode = APPSLIB::ArrayLookup(mod_arrDestinationPlateBarcodes, wl_DestBarcode, mod_iDestinationPlateBarcodeCheckIndex);
            if (mod_bExistingDestinationPlateBarcode == 0)
            {
              mod_arrDestinationPlateBarcodes.AddAsLast(wl_DestBarcode);
            }
            mod_bExistingDestinationPlateType = APPSLIB::ArrayLookup(mod_arrDestinationPlateTypes, wl_DestType, mod_iDestinationPlateTypeCheckIndex);
            if (mod_bExistingDestinationPlateType == 0)
            {
              mod_arrDestinationPlateTypes.AddAsLast(wl_DestType);
            }
          }
        }
        if( 0 != WorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WorkList.RemoveFields();
        mod_sDestinationLabwareBarcode = mod_arrDestinationPlateBarcodes.ElementAt( 1 -1);
        mod_sDestinationLabwareType = mod_arrDestinationPlateTypes.ElementAt( 1 -1);
        STRTOKENIZE::StrTokenize(mod_sDestinationLabwareType, Translate("_L_"), mod_arrDestinationPlateTypeTokens, 0);
        mod_sDestinationLabwareTypeAbbrev = mod_arrDestinationPlateTypeTokens.ElementAt( 1 -1);
        mod_bDestinationLabwareCheck = APPSLIB::ArrayLookup(mod_arrPotentialLabwareType, mod_sDestinationLabwareTypeAbbrev, mod_iDestinationPlateTypeCheckIndex);
        if (mod_bDestinationLabwareCheck != 1)
        {
          dialogHandle_9.SetOutput(mod_sDestinationLabwareType, "\n", Translate("not defined in method"), "\n");
          if( 0 == dialogHandle_9.PlaySound(mod_filepathError) )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_9.ShowOutput(Translate("Labware not defined in method"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_9.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
        if (mod_sDestinationLabwareType == "Matrix_96_Cryo_L_3740")
        {
          mod_sDestinationTypePositionSpecific = APPSLIB::SequenceGetLabwareId(mod_seqMatrixDestination_T23_P4);
          STCC::SetElementBarcode(ML_STAR, "Matrix_96_Cryo_L_3740_0002", "", mod_sDestinationLabwareBarcode);
          mod_sDestinationLabwareID = SeqGetLabwareId(ML_STAR.Matrix_96_Cryo_L_3740_0002);
        }
        if (mod_sDestinationLabwareType == "BioRad_96_VB_L_HSP9601")
        {
          mod_sDestinationTypePositionSpecific = APPSLIB::SequenceGetLabwareId(mod_seqBioRadDestination_T23_P1);
          STCC::SetElementBarcode(ML_STAR, "BioRad_96_VB_L_HSP9601_0002", "", mod_sDestinationLabwareBarcode);
          mod_sDestinationLabwareID = SeqGetLabwareId(ML_STAR.BioRad_96_VB_L_HSP9601_0002);
        }
        MECC::TraceComment(Translate("--------------------------------------------------------------\n\nGetting source/destination well IDs from worklist\n\nChecks to make sure source and destination well IDs match\n\n--------------------------------------------------------------"));
        mod_sSQLSourceDestinationWells = StrConcat12(Translate("SELECT SourceWellID, DestinationWellID FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'DNA' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        WorkList.AddField("SourceWellID", wl_SrcWell, hslString, 255);
        WorkList.AddField("DestinationWellID", wl_DestWell, hslString, 255);
        WorkList.SetDelimiter(hslCSVDelimited);
        if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLSourceDestinationWells) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounterWells = 0;
          while (
             (WorkList.Eof() == 0)
          )
          {
            loopCounterWells = loopCounterWells + 1;
            if( 0 == WorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            mod_bExistingSourceWell = APPSLIB::ArrayLookup(mod_arrSourceWells, wl_SrcWell, mod_iSourceWellIndex);
            mod_bExistingDestinationWell = APPSLIB::ArrayLookup(mod_arrDestinationWells, wl_DestWell, mod_iDestinationWellIndex);
            if (mod_bExistingSourceWell == 0)
            {
              mod_arrSourceWells.AddAsLast(wl_SrcWell);
            }
            else
            {
              dialogHandle_10.SetOutput(Translate("Worklist source wells not unique"), "\n", wl_SrcWell, Translate(" appeared more than once. "));
              if( 0 == dialogHandle_10.PlaySound(mod_filepathError) )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_10.ShowOutput(Translate("Worklist source wells not unique"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_10.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
            if (mod_bExistingDestinationWell == 0)
            {
              mod_arrDestinationWells.AddAsLast(wl_DestWell);
            }
            else
            {
              dialogHandle_11.SetOutput(Translate("Worklist destination wells not unique"), "\n", wl_DestWell, Translate(" appeared more than once. "));
              if( 0 == dialogHandle_11.PlaySound(mod_filepathError) )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              dialogHandle_11.ShowOutput(Translate("Worklist destination wells not unique"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
              if( 0 == dialogHandle_11.PlaySound("") )
              {
                    MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
            }
          }
        }
        if( 0 != WorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WorkList.RemoveFields();
        mod_iWellArrayComparison = NYSCF_UTILITYLIBRARY::CompareArrays(mod_arrSourceWells, mod_arrDestinationWells);
        if (mod_iWellArrayComparison != 1)
        {
          dialogHandle_12.SetOutput(Translate("Source and destination wells in the worklist differ."), "\n", Translate(""), "\n", Translate("Method will abort. Check the worklist"));
          if( 0 == dialogHandle_12.PlaySound(mod_filepathError) )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_12.ShowOutput(Translate("Check Worklist Source and Destination Wells"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_12.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          abort;
        }
        MECC::TraceComment(Translate("--------------------------------------------------------------\n\nGenerating sequences from previous step\n\n--------------------------------------------------------------"));
        mod_iNumberWells=mod_arrSourceWells.GetSize();
        if (mod_iNumberSamples == mod_iNumberWells)
        {
          {
            for(loopCounterSequenceGeneratingWells = 0; loopCounterSequenceGeneratingWells < mod_iNumberWells;)
            {
              loopCounterSequenceGeneratingWells = loopCounterSequenceGeneratingWells + 1;
              temp_WellID = mod_arrSourceWells.ElementAt( loopCounterSequenceGeneratingWells -1);
              SeqAdd(mod_seqSourceLabwareWell, mod_sSourceLabwareID, temp_WellID);
              SeqAdd(mod_seqIntermediateLabwareWell, mod_sIntermediateLabwareID, temp_WellID);
              SeqAdd(mod_seqMagstandLabwareWell, mod_sMagstandLabwareID, temp_WellID);
              SeqAdd(mod_seqShakerLabwareWell, mod_sHeaterShakerLabwareID, temp_WellID);
              SeqAdd(mod_seqDestinationLabwareWell, mod_sDestinationLabwareID, temp_WellID);
            }
          }
          MECC::TraceComment(Translate("Source and Destination Sequences\n=================================="));
          Util2::Debug::TraceSequence(mod_seqSourceLabwareWell);
          Util2::Debug::TraceSequence(mod_seqIntermediateLabwareWell);
          Util2::Debug::TraceSequence(mod_seqDestinationLabwareWell);
          Util2::Debug::TraceSequence(mod_seqMagstandLabwareWell);
        }
        else
        {
          dialogHandle_13.SetOutput(Translate("The number of samples --"), mod_iNumberSamples, Translate("-- does not equal the number of wells --"), mod_iNumberWells, Translate("--"), "\n", Translate(""), "\n", Translate("Check your worklist. Method will abort."));
          if( 0 == dialogHandle_13.PlaySound(mod_filepathError) )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          dialogHandle_13.ShowOutput(Translate("Sample and well mismatch"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          if( 0 == dialogHandle_13.PlaySound("") )
          {
                MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          abort;
        }
        MECC::TraceComment(Translate("--------------------------------------------------------------\n\nGetting elution volume from worklist\n\n--------------------------------------------------------------"));
        mod_sSQLElutionVolume = StrConcat12(Translate("SELECT SourcePlateBarcode FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'ElutionVolume' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        WorkList.AddField("SourcePlateBarcode", wl_ElutionVol, hslInteger);
        WorkList.SetDelimiter(hslCSVDelimited);
        if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLElutionVolume) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounterElutionVol = 0;
          while (
             (WorkList.Eof() == 0)
          )
          {
            loopCounterElutionVol = loopCounterElutionVol + 1;
            if( 0 == WorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != WorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WorkList.RemoveFields();
        mod_iElutionVolume = wl_ElutionVol;
        mod_iAddedElutionVolume = mod_iElutionVolume + 10;
        mod_iMixElutionVolume = mod_iElutionVolume * 0.75;
        MECC::TraceComment(Translate("--------------------------------------------------------------\n\nDetermining if volume normalization required from worklist\n\n--------------------------------------------------------------"));
        mod_sSQLVolumeNormBool = StrConcat12(Translate("SELECT SourcePlateBarcode FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'VolumeNormalization' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        WorkList.AddField("SourcePlateBarcode", wl_VolumeNormBool, hslString, 255);
        WorkList.SetDelimiter(hslCSVDelimited);
        if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLVolumeNormBool) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounterVolBool = 0;
          while (
             (WorkList.Eof() == 0)
          )
          {
            loopCounterVolBool = loopCounterVolBool + 1;
            if( 0 == WorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != WorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WorkList.RemoveFields();
        mod_bRequiresNormalization = StrIVal(wl_VolumeNormBool);
        MECC::TraceComment(Translate("--------------------------------------------------------------\n\nGetting mapping file info from worklist\n\n--------------------------------------------------------------"));
        mod_sMappingFileDirectory = Translate("C:\\MappingFilesNew\\Zymo\\Intermediate\\");
        mod_sMappingFileName = Translate("");
        SerialNumber = Translate("");
        SerialNumber = GetSerialNumber(ML_STAR);
        mod_sSQLSrcToIntKeyword = StrConcat12(Translate("SELECT SourcePlateBarcode FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'SrcToIntMappingFileKeyword' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        WorkList.AddField("SourcePlateBarcode", wl_SrcToIntKeyword, hslString, 255);
        WorkList.SetDelimiter(hslCSVDelimited);
        if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLSrcToIntKeyword) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounterSrcToIntKw = 0;
          while (
             (WorkList.Eof() == 0)
          )
          {
            loopCounterSrcToIntKw = loopCounterSrcToIntKw + 1;
            if( 0 == WorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != WorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WorkList.RemoveFields();
        mod_sSrcToIntMappingFileKeyword = wl_SrcToIntKeyword;
        mod_sSQLIntToDestKeyword = StrConcat12(Translate("SELECT SourcePlateBarcode FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'IntToDestMappingFileKeyword' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
        WorkList.AddField("SourcePlateBarcode", wl_IntToDestKeyword, hslString, 255);
        WorkList.SetDelimiter(hslCSVDelimited);
        if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLIntToDestKeyword) )
        {
              MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
        }
        {
          loopCounterIntToDestKw = 0;
          while (
             (WorkList.Eof() == 0)
          )
          {
            loopCounterIntToDestKw = loopCounterIntToDestKw + 1;
            if( 0 == WorkList.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
          }
        }
        if( 0 != WorkList.Close() )
        {
              MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        WorkList.RemoveFields();
        mod_sIntToDestMappingFileKeyword = wl_IntToDestKeyword;
        mod_iLengthSeqSourceWell = SeqGetTotal(mod_seqSourceLabwareWell);
        mod_iLengthSeqDestinationWell = SeqGetTotal(mod_seqDestinationLabwareWell);
        if (mod_iLengthSeqSourceWell == mod_iLengthSeqDestinationWell)
        {
          mod_bWorklistProcessed = 1;
        }
      }
    }
    MECC::TraceComment(Translate("-------------------------------------\n\nSetting labware GRIP parameters\n\n------------------------------------"));
    APPSLIB::ArrayLookup(mod_arrPotentialLabwareType, mod_sSourceLabwareTypeAbbrev, mod_iPotentialSourceLabwareTypeIndex);
    mod_iSourceGripHeight=mod_arrPotentialLabwareGripHeight.GetAt(mod_iPotentialSourceLabwareTypeIndex-1);
    mod_iSourceGripClosedWidth=mod_arrPotentialLabwareClosedWidth.GetAt(mod_iPotentialSourceLabwareTypeIndex-1);
    mod_iSourceGripOpenWidth=mod_arrPotentialLabwareOpeningWidth.GetAt(mod_iPotentialSourceLabwareTypeIndex-1);
    APPSLIB::ArrayLookup(mod_arrPotentialLabwareType, mod_sIntermediateLabwareTypeAbbrev, mod_iPotentialIntermediateLabwareTypeIndex);
    mod_iIntermediateGripHeight=mod_arrPotentialLabwareGripHeight.GetAt(mod_iPotentialIntermediateLabwareTypeIndex-1);
    mod_iIntermediateGripClosedWidth=mod_arrPotentialLabwareClosedWidth.GetAt(mod_iPotentialIntermediateLabwareTypeIndex-1);
    mod_iIntermediateGripOpenWidth=mod_arrPotentialLabwareOpeningWidth.GetAt(mod_iPotentialIntermediateLabwareTypeIndex-1);
    APPSLIB::ArrayLookup(mod_arrPotentialLabwareType, mod_sDestinationLabwareTypeAbbrev, mod_iPotentialDestinationLabwareTypeIndex);
    mod_iDestinationGripHeight=mod_arrPotentialLabwareGripHeight.GetAt(mod_iPotentialDestinationLabwareTypeIndex-1);
    mod_iDestinationGripClosedWidth=mod_arrPotentialLabwareClosedWidth.GetAt(mod_iPotentialDestinationLabwareTypeIndex-1);
    mod_iDestinationGripOpenWidth=mod_arrPotentialLabwareOpeningWidth.GetAt(mod_iPotentialDestinationLabwareTypeIndex-1);
    if (mod_bReagentCheck == 1)
    {
      MECC::TraceComment(Translate("--------------------------------------------\nDetermining reagent volumes and flagging if not enough\n--------------------------------------------"));
      mod_iNumberSamplesForCalc = mod_iNumberSamples + 2;
      mod_iRequiredEthanol = mod_iNumberSamplesForCalc * 1500;
      mod_iRequiredEthanol = mod_iRequiredEthanol / (1000 * 1.0);
      mod_iRequiredWash1 = mod_iNumberSamplesForCalc * 500;
      mod_iRequiredWash1 = mod_iRequiredWash1 / (1000 * 1.0);
      mod_iRequiredWash2 = mod_iNumberSamplesForCalc * 500;
      mod_iRequiredWash2 = mod_iRequiredWash2 / (1000 * 1.0);
      mod_iRequiredElutionBxCol7 = mod_iNumberSamplesForCalc * mod_iAddedElutionVolume;
      mod_iRequiredElutionBxCol7 = mod_iRequiredElutionBxCol7 / (1000 * 1.0);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      mod_fEstimatedVolCol1 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, ML_STAR.Eppendorf_Res_Col1, 0, Translate("10000000"), 0, 0, 1);
      mod_fEstimatedVolCol1 = mod_fEstimatedVolCol1 * 4;
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      mod_fEstimatedVolCol2 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, ML_STAR.Eppendorf_Res_Col2, 0, Translate("01000000"), 0, 0, 1);
      mod_fEstimatedVolCol2 = mod_fEstimatedVolCol2 * 4;
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      mod_fEstimatedVolCol3 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, ML_STAR.Eppendorf_Res_Col3, 0, Translate("00100000"), 0, 0, 1);
      mod_fEstimatedVolCol3 = mod_fEstimatedVolCol3 * 4;
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      mod_fEstimatedVolCol7 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, ML_STAR.Eppendorf_Res_Col7, 0, Translate("00000010"), 0, 0, 1);
      mod_fEstimatedVolCol7 = mod_fEstimatedVolCol7 * 4;
      if (mod_fEstimatedVolCol1 < mod_iRequiredProtKCol1)
      {
        dialogHandle7.SetOutput(Translate("Add reagent to Column 1"));
        dialogHandle7.ShowOutput(Translate("Low volume in Column 1"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (mod_fEstimatedVolCol2 < mod_iRequiredTissueBxCol2)
      {
        dialogHandle_3.SetOutput(Translate("Add reagent to Column 2"));
        dialogHandle_3.ShowOutput(Translate("Low volume in Column 2"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (mod_fEstimatedVolCol3 < mod_iRequiredMagbindBxCol3)
      {
        dialogHandle_2.SetOutput(Translate("Add reagent to Column 3"));
        dialogHandle_2.ShowOutput(Translate("Low volume in Column 3"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
      if (mod_fEstimatedVolCol7 < mod_iRequiredElutionBxCol7)
      {
        dialogHandle_4.SetOutput(Translate("Add reagent to Column 7"));
        dialogHandle_4.ShowOutput(Translate("Low volume in Column 7"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      }
    }
    if (mod_bReagentCheck != 1)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    }
    mod_iRequiredMagbeadsCol4 = mod_iNumberSamplesForCalc * 33;
    mod_iRequiredMagbeadsCol4 = mod_iRequiredMagbeadsCol4 / (1000 * 1.0);
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    mod_fEstimatedVolCol4 = HSLML_STAR::MeasureContainerVolume2(ML_STAR, ML_STAR.Eppendorf_Res_Col4, 0, Translate("00010000"), 0, 0, 1);
    mod_fEstimatedVolCol4 = mod_fEstimatedVolCol4 * 4;
    if (mod_fEstimatedVolCol4 < mod_iRequiredMagbeadsCol4)
    {
      dialogHandle_15.SetOutput(Translate("Add reagent to Column 4"));
      dialogHandle_15.ShowOutput(Translate("Low volume in Column 4"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    mod_fEstimatedVolBiohaz = HSLML_STAR::MeasureContainerVolume2(ML_STAR, mod_seqBiohazWaste, 0, Translate("00000001"), 0, 0, 1);
    if (mod_fEstimatedVolBiohaz < 1)
    {
      dialogHandle_14.SetOutput(Translate("Make sure you have your biohaz trough on deck - T23 P3"));
      dialogHandle_14.ShowOutput(Translate("Low volume in Biohaz Trough"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if(0){
      MECC::TraceComment(Translate("--------------------------------------------\nScan and move destination rack/plate\n--------------------------------------------"));
      if (mod_bSimulationMode == 1)
      {
        {
          for(loopEasyCodeSimulation = 0; loopEasyCodeSimulation < mod_iNumberSamples;)
          {
            loopEasyCodeSimulation = loopEasyCodeSimulation + 1;
            mod_sSimulatedBarcode = StrIStr(loopEasyCodeSimulation);
            mod_arrDestinationTubeBarcodesEasyCode.AddAsLast(mod_sSimulatedBarcode);
          }
        }
      }
      else
      {
        dialogHandle_19.SetOutput(Translate("Place Destination rack/plate on easy code - Track 23 Position 4"));
        dialogHandle_19.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        {
          loopCounterDestinationEasyCode = 0;
          while (mod_bEasyCodeFinished != 1)
          {
            loopCounterDestinationEasyCode = loopCounterDestinationEasyCode + 1;
            mod_retEasyCodeError = EASYCODEII_HELPER::easyStep_Init(ML_STAR, EASYCODEII::_TRACE_LEVEL_NORMAL, EASYCODEII::_HSLTRUE);
            mod_retEasyCodeError = EASYCODEII::CAMERA::Open(mod_sEasyCodeSettingsCamera);
            EASYCODEII_HELPER::easyStep_Light_On(ML_STAR, 3, 50);
            mod_retEasyCodeError = EASYCODEII_HELPER::easyStep_Barcode_TakePicture(ML_STAR, mod_sEasyCodeSettingsCamera, EASYCODEII::_HSLTRUE);
            EASYCODEII_HELPER::easyStep_Light_Off(ML_STAR, 3);
            Date = TimGetFormattedDate(Translate("%Y%m%d"));
            Time = TimGetFormattedTime(Translate("%H%M%S"));
            if (mod_sDestinationLabwareType == "Matrix_96_Cryo_L_3740")
            {
              MECC::TraceComment(Translate("------------------------------------------------\nScanning Matrix rack 1D and 2D barcodes\n------------------------------------------------"));
              mod_retEasyCodeError = EASYCODEII_HELPER::easyStep_Barcode_Analyse(mod_sEasyCodeSettingsBarcodeMatrix, EASYCODEII::_HSLFALSE, EASYCODEII::EASYCODEII_HELPER::GROUPNAME::_RACK, EASYCODEII::EASYCODEII_HELPER::GROUPNAME::_TUBES, Translate(""), Translate(""), Translate("Matrix Rack"), mod_sEasyCodeRackID);
              TrcTrace(Translate("destination rack id "), mod_sEasyCodeRackID);
              EASYCODEII_HELPER::easyStep_Barcode_GetResult(mod_sEasyCodeRackID, EASYCODEII::EASYCODEII_HELPER::GROUPNAME::_TUBES, 1, mod_arrDestinationPositionNumberEasyCode, mod_arrDestinationPositionTextEasyCode, mod_arrDestinationTubeBarcodesEasyCode, mod_arrDestinationRackErrors);
              EASYCODEII_HELPER::easyStep_Barcode_GetResult(mod_sEasyCodeRackID, Translate("Side"), 1, mod_arrDestinationRackSidePositionNumberEasyCode, mod_arrDestinationRackSidePositionTextEasyCode, mod_arrDestinationRackSideBarcodeEasyCode, mod_arrDestinationRackSideErrors);
              mod_sDestinationBarcodeEasyCode = mod_arrDestinationRackSideBarcodeEasyCode.ElementAt( 1 -1);
              if (mod_sDestinationBarcodeEasyCode != mod_sDestinationLabwareBarcode)
              {
                dialogHandle_18.SetOutput(Translate("Destination Rack Barcode does not match Worklist."), "\n", Translate(""), "\n", Translate("Press 'Ignore' to use scanned barcode in mapping files."));
                if( 0 == dialogHandle_18.PlaySound(mod_filepathError) )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                mod_iDestinationMismatchChoice = dialogHandle_18.ShowOutput(Translate("Destination barcode mismatch"), hslAbortRetryIgnore | hslInformation | hslDefButton2, hslInfinite);
                if( 0 == dialogHandle_18.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (mod_iDestinationMismatchChoice == 3)
                {
                  abort;
                }
                if (mod_iDestinationMismatchChoice == 5)
                {
                  mod_sDestinationLabwareBarcode = mod_sDestinationBarcodeEasyCode;
                  mod_bEasyCodeFinished = 1;
                }
              }
              else
              {
                mod_bEasyCodeFinished = 1;
              }
              mod_pathEasyCodeExportPictures = StrConcat12(mod_pathEasyCodeExportBase, Translate("pictures\\"), mod_sDestinationLabwareBarcode, Translate("_"), Date, Translate("_"), Time, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
              EASYCODEII_HELPER::easyStep_Barcode_ExportRackPicture(mod_sEasyCodeRackID, EASYCODEII::_HSLFALSE, mod_pathEasyCodeExportPictures, EASYCODEII::CAMERA::SAVEPICTURE::PICTUREFORMAT::_JPEG_UNCOPRESSED, EASYCODEII::_HSLTRUE, EASYCODEII::_HSLTRUE, 100);
              {
                for(loopCounter1 = 0; loopCounter1 < 96;)
                {
                  loopCounter1 = loopCounter1 + 1;
                  temp_EasyCodeItem = mod_arrDestinationTubeBarcodesEasyCode.ElementAt( loopCounter1 -1);
                  temp_EasyCodeItem = StrGetLength(temp_EasyCodeItem);
                  if (temp_EasyCodeItem != 10)
                  {
                    mod_arrDestinationTubeBarcodesEasyCode.SetAt(loopCounter1-1, Translate(""));
                  }
                  else
                  {
                    mod_arrScannedDestinationTubeBarcodes.AddAsLast(temp_EasyCodeItem);
                  }
                }
              }
              MECC::TraceComment(Translate("=============\n\nEasy code traces below\n\n============="));
              TrcTrace(Translate("Easy code rack barcode  "), mod_sDestinationBarcodeEasyCode);
              Util2::Debug::TraceArray_4(Translate("Easy Code arrays "), mod_arrDestinationPositionNumberEasyCode, mod_arrDestinationPositionTextEasyCode, mod_arrDestinationTubeBarcodesEasyCode, mod_arrDestinationRackErrors);
              mod_iScannedDestinationTubes=mod_arrScannedDestinationTubeBarcodes.GetSize();
              if (mod_iScannedDestinationTubes != mod_iNumberSamples)
              {
                dialogHandle_17.SetOutput(Translate("Number of matrix tubes in your destination rack does not match the number of samples in the worklist"));
                if( 0 == dialogHandle_17.PlaySound(mod_filepathError) )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                dialogHandle_17.ShowOutput(Translate("Check your destination rack tubes"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                if( 0 == dialogHandle_17.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
              }
            }
            else
            {
              MECC::TraceComment(Translate("------------------------------------------------\nScanning plate barcode\n------------------------------------------------"));
              EASYCODEII_HELPER::easyStep_Barcode_GetResult(mod_sEasyCodeRackID, Translate("Side"), 1, mod_arrDestinationPlatePositionNumbersEasyCode, mod_arrDestinationPlatePositionTextEasyCode, mod_arrDestinationPlateBarcodeEasyCode, mod_arrDestinationPlateError);
              mod_sDestinationBarcodeEasyCode = mod_arrDestinationPlateBarcodeEasyCode.ElementAt( 1 -1);
              TrcTrace(Translate("Easy code scanned destination barcode   "), mod_sDestinationBarcodeEasyCode);
              if (mod_sDestinationBarcodeEasyCode != mod_sDestinationLabwareBarcode)
              {
                dialogHandle_16.SetOutput(Translate("Easy code scanned destination barcode does not match worklist destination barcode."), "\n", Translate(""), "\n", Translate("Press 'Ignore' to use scanned barcode in mapping files."));
                if( 0 == dialogHandle_16.PlaySound(mod_filepathError) )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                mod_iDestinationMismatchChoice = dialogHandle_16.ShowOutput(Translate("Destination barcode mismatch"), hslAbortRetryIgnore | hslInformation | hslDefButton2, hslInfinite);
                if( 0 == dialogHandle_16.PlaySound("") )
                {
                      MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                if (mod_iDestinationMismatchChoice == 3)
                {
                  abort;
                }
                if (mod_iDestinationMismatchChoice == 5)
                {
                  mod_sDestinationLabwareBarcode = mod_sDestinationBarcodeEasyCode;
                  mod_bEasyCodeFinished = 1;
                }
              }
              else
              {
                mod_bEasyCodeFinished = 1;
              }
              EASYCODEII_HELPER::easyStep_Barcode_ExportRackPicture(mod_sEasyCodeRackID, EASYCODEII::_HSLFALSE, mod_pathEasyCodeExportPictures, EASYCODEII::CAMERA::SAVEPICTURE::PICTUREFORMAT::_JPEG_UNCOPRESSED, EASYCODEII::_HSLTRUE, EASYCODEII::_HSLTRUE, 100);
            }
            EASYCODEII::CAMERA::Close();
            EASYCODEII_HELPER::easyStep_DeInit(ML_STAR);
            TrcTrace(Translate("Easy code scanned destination barcode   "), mod_sDestinationBarcodeEasyCode);
          }
        }
        dialogHandle_22.SetOutput(Translate("Move destination rack to Track 23 Position 1"), "\n", Translate(""), "\n", Translate("Place source rack/plate on easy code with downholder"));
        dialogHandle_22.ShowOutput("", hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        if (mod_bSimulationMode == 0)
        {
          MECC::TraceComment(Translate("--------------------------------------------\nScanning source plate/rack\n--------------------------------------------"));
          mod_bEasyCodeFinished = 0;
          {
            loopCounterSourceEasyCode = 0;
            while (mod_bEasyCodeFinished != 1)
            {
              loopCounterSourceEasyCode = loopCounterSourceEasyCode + 1;
              mod_retEasyCodeError = EASYCODEII_HELPER::easyStep_Init(ML_STAR, EASYCODEII::_TRACE_LEVEL_NORMAL, EASYCODEII::_HSLTRUE);
              mod_retEasyCodeError = EASYCODEII::CAMERA::Open(mod_sEasyCodeSettingsCamera);
              EASYCODEII_HELPER::easyStep_Light_On(ML_STAR, 3, 50);
              mod_retEasyCodeError = EASYCODEII_HELPER::easyStep_Barcode_TakePicture(ML_STAR, mod_sEasyCodeSettingsCamera, EASYCODEII::_HSLTRUE);
              EASYCODEII_HELPER::easyStep_Light_Off(ML_STAR, 3);
              Date = TimGetFormattedDate(Translate("%Y%m%d"));
              Time = TimGetFormattedTime(Translate("%H%M%S"));
              if (mod_sSourceLabwareType == "Matrix_96_Cryo_L_3740")
              {
                MECC::TraceComment(Translate("------------------------------------------------\nScanning Matrix rack 1D and 2D barcodes\n------------------------------------------------"));
                mod_retEasyCodeError = EASYCODEII_HELPER::easyStep_Barcode_Analyse(mod_sEasyCodeSettingsBarcodeMatrix, EASYCODEII::_HSLFALSE, EASYCODEII::EASYCODEII_HELPER::GROUPNAME::_RACK, EASYCODEII::EASYCODEII_HELPER::GROUPNAME::_TUBES, Translate(""), Translate(""), Translate("Matrix Rack"), mod_sEasyCodeRackID);
                EASYCODEII_HELPER::easyStep_Barcode_GetResult(mod_sEasyCodeRackID, EASYCODEII::EASYCODEII_HELPER::GROUPNAME::_TUBES, 1, mod_arrSourcePositionNumberEasyCode, mod_arrSourcePositionTextEasyCode, mod_arrSourceTubeBarcodesEasyCode, mod_arrSourceTubeErrors);
                EASYCODEII_HELPER::easyStep_Barcode_GetResult(mod_sEasyCodeRackID, Translate("Side"), 1, mod_arrSourceRackPositionNumberEasyCode, mod_arrSourceRackPositionTextEasyCode, mod_arrSourceRackBarcodeEasyCode, mod_arrSourceRackErrors);
                mod_sSourceBarcodeEasyCode = mod_arrSourceRackBarcodeEasyCode.ElementAt( 1 -1);
                if (mod_sSourceBarcodeEasyCode != mod_sSourceLabwareBarcode)
                {
                  dialogHandle_20.SetOutput(Translate("Source Rack barcode does not match Worklist."), "\n", Translate(""), "\n", Translate("Press 'Ignore' to use scanned barcode in mapping files."));
                  if( 0 == dialogHandle_20.PlaySound(mod_filepathError) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  mod_iSourceMismatchChoice = dialogHandle_20.ShowOutput(Translate("Source barcode mismatch"), hslAbortRetryIgnore | hslInformation | hslDefButton2, hslInfinite);
                  if( 0 == dialogHandle_20.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (mod_iSourceMismatchChoice == 3)
                  {
                    abort;
                  }
                  if (mod_iSourceMismatchChoice == 5)
                  {
                    mod_sSourceLabwareBarcode = mod_sSourceBarcodeEasyCode;
                    mod_bEasyCodeFinished = 1;
                  }
                }
                mod_pathEasyCodeExportPictures = StrConcat12(mod_pathEasyCodeExportBase, Translate("pictures\\"), mod_sSourceLabwareBarcode, Translate("_"), Date, Translate("_"), Time, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                EASYCODEII_HELPER::easyStep_Barcode_ExportRackPicture(mod_sEasyCodeRackID, EASYCODEII::_HSLFALSE, mod_pathEasyCodeExportPictures, EASYCODEII::CAMERA::SAVEPICTURE::PICTUREFORMAT::_JPEG_UNCOPRESSED, EASYCODEII::_HSLTRUE, EASYCODEII::_HSLTRUE, 100);
                MECC::TraceComment(Translate("=============\n\nEasy code traces below\n\n============="));
                TrcTrace(Translate("Easy code rack barcode  "), mod_sSourceBarcodeEasyCode);
                Util2::Debug::TraceArray_4(Translate("Easy Code arrays "), mod_arrSourcePositionNumberEasyCode, mod_arrSourcePositionTextEasyCode, mod_arrSourceTubeBarcodesEasyCode, mod_arrSourceTubeErrors);
                {
                  for(loopCounter2 = 0; loopCounter2 < 96;)
                  {
                    loopCounter2 = loopCounter2 + 1;
                    temp_EasyCodeItem = mod_arrSourceTubeBarcodesEasyCode.ElementAt( loopCounter2 -1);
                    temp_EasyCodeItem = StrGetLength(temp_EasyCodeItem);
                    if (temp_EasyCodeItem != 10)
                    {
                      mod_arrSourceTubeBarcodesEasyCode.SetAt(loopCounter2-1, Translate(""));
                    }
                  }
                }
                MECC::TraceComment(Translate("---------------------------------------------------\nComparing tube positions against worklist\n---------------------------------------------------"));
                mod_sSQLTubeBCSourceWellMatch = StrConcat12(Translate("SELECT Details, SourceWellID FROM "), mod_sTableName, Translate(" WHERE Task = "), Translate(" 'DNA' "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
                WorkList.AddField("Details", wl_Details, hslString, 255);
                WorkList.AddField("SourceWellID", wl_SrcWell, hslString, 255);
                WorkList.SetDelimiter(hslCSVDelimited);
                if( 0 == WorkList.Open(mod_filepathWorklist, hslRead, mod_sSQLTubeBCSourceWellMatch) )
                {
                      MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, mod_filepathWorklist, "HxMetEdCompCmd");
                }
                mod_bMisplacedTubePrompt = 0;
                mod_arrExpectedTubePosition.SetSize(0);
                mod_arrFoundTubePosition.SetSize(0);
                mod_bUnexpectedTubePrompt = 0;
                mod_arrUnexpectedTube.SetSize(0);
                mod_arrUnexpectedTubePosition.SetSize(0);
                {
                  loopCounterTubePositionMatch = 0;
                  while (
                     (WorkList.Eof() == 0)
                  )
                  {
                    loopCounterTubePositionMatch = loopCounterTubePositionMatch + 1;
                    if( 0 == WorkList.ReadRecord() )
                    {
                          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                    }
                    STRTOKENIZE::StrTokenize(wl_Details, Translate("|"), mod_arrWorklistDetailsTokens, 0);
                    wl_Details = mod_arrWorklistDetailsTokens.ElementAt( 2 -1);
                    mod_bWorklistTubeBCPresentEasyCode = APPSLIB::ArrayLookup(mod_arrSourceTubeBarcodesEasyCode, wl_Details, mod_iSourceTubeBarcodeArrayIndex);
                    if (mod_bWorklistTubeBCPresentEasyCode == 1)
                    {
                      temp_SourceTubeBarcodeWell=mod_arrSourcePositionTextEasyCode.GetAt(mod_iSourceTubeBarcodeArrayIndex-1);
                      if (temp_SourceTubeBarcodeWell != wl_SrcWell)
                      {
                        mod_arrExpectedTubePosition.AddAsLast(wl_SrcWell);
                        mod_arrFoundTubePosition.AddAsLast(temp_SourceTubeBarcodeWell);
                        mod_bMisplacedTubePrompt = 1;
                      }
                    }
                    else
                    {
                      mod_arrUnexpectedTube.AddAsLast(wl_Details);
                      mod_arrUnexpectedTubePosition.AddAsLast(wl_SrcWell);
                      mod_bUnexpectedTubePrompt = 1;
                    }
                  }
                }
                if( 0 != WorkList.Close() )
                {
                      MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                }
                WorkList.RemoveFields();
                if (mod_bUnexpectedTubePrompt == 1)
                {
                  MECC::TraceComment(Translate("-----------------------------------------\nLook at unexpected tubes below\n-----------------------------------------"));
                  Util2::Debug::TraceArray_2(Translate("These worklist tubes were not found in the Source Rack on the Easy Code"), mod_arrUnexpectedTube, mod_arrUnexpectedTubePosition);
                  MECC::TraceComment(Translate("-----------------------------------------\nLook at unexpected tubes above\n-----------------------------------------"));
                  dialogHandle_23.SetOutput(Translate("Source tubes listed in worklist not present in Source Rack."), "\n", Translate(""), "\n", Translate("Check Trace for missing worklist tubes."), "\n", Translate(""), "\n", Translate("Press 'Retry' to rescan or 'Cancel' to abort method."), "\n");
                  if( 0 == dialogHandle_23.PlaySound(mod_filepathError) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  mod_iUnexpectedTubeDecision = dialogHandle_23.ShowOutput(Translate("Unexpected tubes in worklist"), hslRetryCancel | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_23.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (mod_iUnexpectedTubeDecision == 2)
                  {
                    abort;
                  }
                }
                if (mod_bMisplacedTubePrompt == 1)
                {
                  MECC::TraceComment(Translate("-----------------------------------------\nLook at misplaced tubes below\n-----------------------------------------"));
                  Util2::Debug::TraceArray_2(Translate("Expected vs Found -- misplaced tubes"), mod_arrExpectedTubePosition, mod_arrFoundTubePosition);
                  MECC::TraceComment(Translate("-----------------------------------------\nLook at misplaced tubes above\n-----------------------------------------"));
                  dialogHandle_21.SetOutput(Translate("Worklist source tube positions do not match positions found by easy code."), "\n", Translate(""), "\n", Translate("Check Trace for misplaced tubes. Press 'OK' to rescan"));
                  if( 0 == dialogHandle_21.PlaySound(mod_filepathError) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  dialogHandle_21.ShowOutput(Translate("Source tube position mismatch"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
                  if( 0 == dialogHandle_21.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                }
                else
                {
                  if (mod_bUnexpectedTubePrompt == 0)
                  {
                    mod_bEasyCodeFinished = 1;
                  }
                }
              }
              else
              {
                MECC::TraceComment(Translate("------------------------------------------------\nScanning plate barcode\n------------------------------------------------"));
                mod_retEasyCodeError = EASYCODEII_HELPER::easyStep_Barcode_Analyse(mod_sEasyCodeSettingsBarcodeMatrix, EASYCODEII::_HSLFALSE, EASYCODEII::EASYCODEII_HELPER::GROUPNAME::_RACK, Translate(""), Translate(""), Translate(""), Translate("Plate"), mod_sEasyCodeRackID);
                EASYCODEII_HELPER::easyStep_Barcode_GetResult(mod_sEasyCodeRackID, Translate("Side"), 1, mod_arrSourcePlatePositionNumbersEasyCode, mod_arrSourcePlatePositionTextEasyCode, mod_arrSourcePlateBarcodeEasyCode, mod_arrSourcePlateError);
                Util2::Debug::TraceArray(Translate("source plate barcode array  "), mod_arrSourcePlateBarcodeEasyCode);
                mod_sSourceBarcodeEasyCode = mod_arrSourcePlateBarcodeEasyCode.ElementAt( 1 -1);
                TrcTrace(mod_sSourceBarcodeEasyCode, mod_sSourceLabwareBarcode);
                if (mod_sSourceBarcodeEasyCode != mod_sSourceLabwareBarcode)
                {
                  dialogHandle_24.SetOutput(Translate("Easy code scanned source barcode does not match worklist source barcode."), "\n", Translate(""), "\n", Translate("Press 'Ignore' to use scanned barcode in mapping files."));
                  if( 0 == dialogHandle_24.PlaySound(mod_filepathError) )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  mod_iSourceMismatchChoice = dialogHandle_24.ShowOutput(Translate("Source barcode mismatch"), hslAbortRetryIgnore | hslInformation | hslDefButton2, hslInfinite);
                  if( 0 == dialogHandle_24.PlaySound("") )
                  {
                        MECC::RaiseRuntimeErrorEx(-1204944640, MECC::IDS::stepNameDlgUserOutput, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
                  }
                  if (mod_iSourceMismatchChoice == 3)
                  {
                    abort;
                  }
                  if (mod_iSourceMismatchChoice == 5)
                  {
                    mod_sSourceLabwareBarcode = mod_sSourceBarcodeEasyCode;
                    mod_bEasyCodeFinished = 1;
                  }
                }
                else
                {
                  mod_bEasyCodeFinished = 1;
                }
                EASYCODEII_HELPER::easyStep_Barcode_ExportRackPicture(mod_sEasyCodeRackID, EASYCODEII::_HSLFALSE, mod_pathEasyCodeExportPictures, EASYCODEII::CAMERA::SAVEPICTURE::PICTUREFORMAT::_JPEG_UNCOPRESSED, EASYCODEII::_HSLTRUE, EASYCODEII::_HSLTRUE, 100);
              }
              EASYCODEII::CAMERA::Close();
              EASYCODEII_HELPER::easyStep_DeInit(ML_STAR);
              TrcTrace(Translate("Easy code scanned source barcode   "), mod_sSourceBarcodeEasyCode);
            }
          }
        }
      }
      MECC::TraceComment(Translate("--------------------------------------------\nStarting method/sending slack\n--------------------------------------------"));
    }
    MECC::TraceComment(Translate("--------------------------------------------\n\nStarting sample processing\n\n--------------------------------------------"));
    MECC::TraceComment(Translate("--------------------------------------------\n\n1. Add equal volume 95-100% ethanol to equal volume of lysed sample\n2. mix well\n3. add 20ul magbeads\n4. mix well for 10 min\n5. transfer plate to magsand, pellet beads, aspirate/discard supernatant\n6. add 500ul wash1 and mix well\n7. transfer plate to magsand, pellet beads, aspirate/discard supernatant\n8. add 500ul wash2 and mix well\n9. transfer plate to magsand, pellet beads, aspirate/discard supernatant\n10. add 500ul ethanol and mix well\n11. transfer plate to magsand, pellet beads, aspirate/discard supernatant\n12. add 500ul ethanol and mix well\n13. transfer plate to magsand, pellet beads, aspirate/discard supernatant\n14. dry beads for 10 min\n15. elute rna from beads with 50ul h2o\n16. mix well for 5 min\n17. transfer to magstand, pellet beads, aspirate/transfer suupernatant to new tube\n\n--------------------------------------------"));
    SeqResetSequenceIndexes(mod_seqIntermediateLabwareWell);
    SeqResetSequenceIndexes(mod_seqMagstandLabwareWell);
    SeqResetSequenceIndexes(mod_seqDestinationLabwareWell);
    SeqResetSequenceIndexes(mod_seqTipWaste);
    MECC::TraceComment(Translate("--------------------------------------------\n\n0. Determine Sample volume using last liquid height\n\nfind remaining sequence positions; \n    if > 8: pickup 8 tips\n   else: pickup remaining tips\n\nloop over remaining tips/8\nset channel pattern (appslib::channelpatternsingletip)\nmeasurecontainervolume2\nappend measurement to array\n\n--------------------------------------------"));
    mod_arrSampleVolumeMeasurements.SetSize(0);
    mod_iRunningSampleVolumeTotal = 0;
    {
      mod_seqSourceLabwareWell.SetCurrentPosition(1);
      while (
         (mod_seqSourceLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqSourceLabwareWell, 1);
        mod_iTotalSamplePositions = SeqGetTotal(mod_seqSourceLabwareWell);
        mod_iUsedSamplePositions = SeqGetUsedPositions(mod_seqSourceLabwareWell);
        mod_iRemainingSamplePositions = mod_iTotalSamplePositions - mod_iUsedSamplePositions;
        if (mod_iRemainingSamplePositions >= 8)
        {
          mod_iTipsRequiredForSampleVolumeQuery = 8;
        }
        else
        {
          mod_iTipsRequiredForSampleVolumeQuery = mod_iRemainingSamplePositions;
        }
        mod_sTipsRequiredForSampleVolumeQuery = APPSLIB::ChannelPatternMultipleTip(ML_STAR, mod_iTipsRequiredForSampleVolumeQuery);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          for(SampleVolumeLoopCounter = 0; SampleVolumeLoopCounter < mod_iTipsRequiredForSampleVolumeQuery;)
          {
            SampleVolumeLoopCounter = SampleVolumeLoopCounter + 1;
            mod_sSingleChannelVolumeQuery = APPSLIB::ChannelPatternSingleTip(ML_STAR, SampleVolumeLoopCounter);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            mod_fMeasuredSampleVolume = HSLML_STAR::MeasureContainerVolume2(ML_STAR, mod_seqSourceLabwareWell, 0, mod_sSingleChannelVolumeQuery, 0, 0, 1);
            mod_fMeasuredSampleVolume = mod_fMeasuredSampleVolume * 1000;
            mod_fMeasuredSampleVolume = MthRound(mod_fMeasuredSampleVolume, 0);
            mod_iRunningSampleVolumeTotal = mod_iRunningSampleVolumeTotal + mod_fMeasuredSampleVolume;
            mod_arrSampleVolumeMeasurements.AddAsLast(mod_fMeasuredSampleVolume);
            TrcTrace(Translate("estimated volumes listed here                                   "), mod_fMeasuredSampleVolume);
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (mod_seqSourceLabwareWell.GetCurrentPosition() > 0 && mod_seqSourceLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqSourceLabwareWell.SetMax(mod_seqSourceLabwareWell.GetTotal());
      mod_seqSourceLabwareWell.SetCurrentPosition(1);
    }
    getArrayMeanAndStandardDeviation(mod_arrSampleVolumeMeasurements, mod_fSampleVolumeMean, mod_fSampleVolumeSTD, mod_iSampleVolumeSize);
    mod_fSampleVolumeUpper = mod_fSampleVolumeMean + mod_fSampleVolumeSTD;
    mod_fSampleVolumeLower = mod_fSampleVolumeMean - mod_fSampleVolumeSTD;
    {
      for(OutlierLoopCounter = 0; OutlierLoopCounter < mod_iSampleVolumeSize;)
      {
        OutlierLoopCounter = OutlierLoopCounter + 1;
        mod_iSampleItem = mod_arrSampleVolumeMeasurements.ElementAt( OutlierLoopCounter -1);
        if (mod_iSampleItem >= mod_fSampleVolumeUpper)
        {
          dialogHandle1.SetOutput(Translate("Check your tube volume"));
          dialogHandle1.ShowOutput(Translate("Confirm Sample Volume"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
        if (mod_iSampleItem <= mod_fSampleVolumeLower)
        {
          dialogHandle_25.SetOutput(Translate("Check your tube volume"));
          dialogHandle_25.ShowOutput(Translate("Confirm Sample Volume"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        }
      }
    }
    MECC::TraceComment(Translate("--------------------------------------------\n\n1. Add equal volume 95-100% ethanol to equal volume of lysed sample\n\n--------------------------------------------"));
    {
      while (
         (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqIntermediateLabwareWell, 1);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0 && mod_seqIntermediateLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqIntermediateLabwareWell.SetMax(mod_seqIntermediateLabwareWell.GetTotal());
      mod_seqIntermediateLabwareWell.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\n3. Shaking plate for 10 minutes\n\nKenny Scan intermediate plate while moving to shaker\n\nPlate movements: Intermediate Home --> Shaker (10 minutes) -->  Intermediate Home\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 1);
    HHS_HELPER::Shake_Start(mod_iShakerDeviceNumber, 1300);
    if( 0 == timerShake10min.SetTimer(900) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerShake10min, Translate("Shaking plate for 15 minutes"));
    if( 0 == timerShake10min.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedShake = timerShake10min.GetElapsedTime();
    HHS_HELPER::Shake_Stop(mod_iShakerDeviceNumber);
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 0);
    if(0){
      MECC::TraceComment(Translate("==============================\n\nStage tips and Head Mix\n\n=============================="));
      if (mod_bHeadMix == 1)
      {
        SeqRemoveAll(mod_seqTipStagingPattern);
        mod_sTipStagingLabware = SeqGetLabwareId(ML_STAR.Core96_TipSupport_HT_L_0001);
        TrcTrace(Translate("Tip staging labware ID            "), mod_sTipStagingLabware);
        {
          for(loopCounterTipStaging = 0; loopCounterTipStaging < mod_iNumberSamples;)
          {
            loopCounterTipStaging = loopCounterTipStaging + 1;
            TrcTrace(Translate("Tip staging labware ID            "), mod_sTipStagingLabware);
            temp_TipStagingPosition=mod_arrSourceWells.GetAt(loopCounterTipStaging-1);
            TrcTrace(Translate("Tip staging position ID            "), temp_TipStagingPosition);
            temp_iTipStagingPosition = APPSLIB::AlphaNumConversion(1, temp_TipStagingPosition, 96);
            temp_sTipStagingPosition = StrIStr(temp_iTipStagingPosition);
            TrcTrace(Translate("Tip staging position ID            "), temp_sTipStagingPosition);
            SeqAdd(mod_seqTipStagingPattern, mod_sTipStagingLabware, temp_sTipStagingPosition);
          }
        }
        StageTipsChannels(ML_STAR.MlStar1000ulHighVolumeTip, ML_STAR.Core96_TipSupport_HT_L_0001, mod_seqTipStagingPattern);
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        if (mod_iNumberSamples != 96)
        {
          mod_iSampleModulus = mod_iNumberSamples % 8;
          TrcTrace(Translate("modulus is        "), mod_iSampleModulus);
          SeqRemoveAll(mod_seqTipStagingPattern);
          mod_sTipStagingLabware = SeqGetLabwareId(ML_STAR.Core96_TipSupport_HT_L_0001);
          TrcTrace(Translate("Tip staging labware ID            "), mod_sTipStagingLabware);
          {
            for(loopCounterTipStaging = 0; loopCounterTipStaging < mod_iNumberSamples;)
            {
              loopCounterTipStaging = loopCounterTipStaging + 1;
              TrcTrace(Translate("Tip staging labware ID            "), mod_sTipStagingLabware);
              temp_TipStagingPosition=mod_arrSourceWells.GetAt(loopCounterTipStaging-1);
              TrcTrace(Translate("Tip staging position ID            "), temp_TipStagingPosition);
              temp_iTipStagingPosition = APPSLIB::AlphaNumConversion(1, temp_TipStagingPosition, 96);
              temp_sTipStagingPosition = StrIStr(temp_iTipStagingPosition);
              TrcTrace(Translate("Tip staging position ID            "), temp_sTipStagingPosition);
              SeqAdd(mod_seqTipStagingPattern, mod_sTipStagingLabware, temp_sTipStagingPosition);
            }
          }
          StageTipsChannels(ML_STAR.MlStar1000ulHighVolumeTip, ML_STAR.Core96_TipSupport_HT_L_0001, mod_seqTipStagingPattern);
          {
            	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
          }
        }
        else
        {
        }
      }
    }
    MECC::TraceComment(Translate("---------------------------------\n\nMoving intermediate plate from shaker to magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("--------------------------------------------\n\n2. Add 20ul Magbinding beads\n\n--------------------------------------------"));
    SeqRemoveAll(mod_seqMagbeadMix);
    SeqCopySequence(mod_seqMagbeadMix, mod_seqReagent_Col4_Magbeads_T16_P4);
    {
      loopCounter4 = 0;
      mod_seqIntermediateLabwareWell.SetCurrentPosition(1);
      mod_seqReagent_Col4_Magbeads_T16_P4.SetCurrentPosition(1);
      while (
         (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqIntermediateLabwareWell, 1, mod_seqReagent_Col4_Magbeads_T16_P4, 1);
        loopCounter4 = loopCounter4 + 1;
        mod_sMagbeadMixPattern = Translate("11111111");
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0 && mod_seqIntermediateLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqIntermediateLabwareWell.SetMax(mod_seqIntermediateLabwareWell.GetTotal());
      mod_seqReagent_Col4_Magbeads_T16_P4.SetMax(mod_seqReagent_Col4_Magbeads_T16_P4.GetTotal());
      mod_seqIntermediateLabwareWell.SetCurrentPosition(1);
      mod_seqReagent_Col4_Magbeads_T16_P4.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\n3. Shaking plate for 10 minutes\n\nKenny Scan intermediate plate while moving to shaker\n\nPlate movements: Intermediate Home  --> Shaker (10 minutes) --> Magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 1);
    HHS_HELPER::Shake_Start(mod_iShakerDeviceNumber, 1500);
    if( 0 == timerShake10min.SetTimer(900) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerShake10min, Translate("Shaking plate for 15 minutes"));
    if( 0 == timerShake10min.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedShake = timerShake10min.GetElapsedTime();
    HHS_HELPER::Shake_Stop(mod_iShakerDeviceNumber);
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 0);
    MECC::TraceComment(Translate("---------------------------------\n\nMoving intermediate plate from shaker to magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("--------------------------------------------------------------\n\n4. Magnetic bead separation and supernatant discard\n\n--------------------------------------------------------------"));
    if( 0 == timerBeadSeparation.SetTimer(mod_iBeadSeparationTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerBeadSeparation, Translate("Letting magnetic beads separate"));
    if( 0 == timerBeadSeparation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedBeadSeparation = timerBeadSeparation.GetElapsedTime();
    {
      loopCounter1_5 = 0;
      while (
         (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqMagstandLabwareWell, 1);
        loopCounter1_5 = loopCounter1_5 + 1;
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, -9, 0, 0);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, 9, 0, 0);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0 && mod_seqMagstandLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqMagstandLabwareWell.SetMax(mod_seqMagstandLabwareWell.GetTotal());
      mod_seqMagstandLabwareWell.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\nPlate movements: Magstand --> Intermediate Home\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    SeqResetSequenceIndexes(mod_seqIntermediateLabwareWell);
    SeqResetSequenceIndexes(mod_seqMagstandLabwareWell);
    SeqResetSequenceIndexes(mod_seqDestinationLabwareWell);
    SeqResetSequenceIndexes(mod_seqTipWaste);
    MECC::TraceComment(Translate("--------------------------------------------\n\n1. Add equal volume 95-100% ethanol to equal volume of lysed sample\n\n--------------------------------------------"));
    {
      while (
         (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqIntermediateLabwareWell, 1);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0 && mod_seqIntermediateLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqIntermediateLabwareWell.SetMax(mod_seqIntermediateLabwareWell.GetTotal());
      mod_seqIntermediateLabwareWell.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\n3. Shaking plate for 10 minutes\n\nKenny Scan intermediate plate while moving to shaker\n\nPlate movements: Intermediate Home  --> Shaker (10 minutes) --> Magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 1);
    HHS_HELPER::Shake_Start(mod_iShakerDeviceNumber, 1500);
    if( 0 == timerShake10min.SetTimer(900) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerShake10min, Translate("Shaking plate for 15 minutes"));
    if( 0 == timerShake10min.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedShake = timerShake10min.GetElapsedTime();
    HHS_HELPER::Shake_Stop(mod_iShakerDeviceNumber);
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 0);
    MECC::TraceComment(Translate("---------------------------------\n\nMoving intermediate plate from shaker to magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("--------------------------------------------------------------\n\n4. Magnetic bead separation and supernatant discard\n\n--------------------------------------------------------------"));
    if( 0 == timerBeadSeparation.SetTimer(mod_iBeadSeparationTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerBeadSeparation, Translate("Letting magnetic beads separate"));
    if( 0 == timerBeadSeparation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedBeadSeparation = timerBeadSeparation.GetElapsedTime();
    {
      loopCounter1_5 = 0;
      while (
         (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqMagstandLabwareWell, 1);
        loopCounter1_5 = loopCounter1_5 + 1;
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, -9, 0, 0);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, 9, 0, 0);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0 && mod_seqMagstandLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqMagstandLabwareWell.SetMax(mod_seqMagstandLabwareWell.GetTotal());
      mod_seqMagstandLabwareWell.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\nPlate movements: Magstand --> Intermediate Home\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("--------------------------------------------\n\n1. Add equal volume 95-100% ethanol to equal volume of lysed sample\n\n--------------------------------------------"));
    {
      while (
         (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqIntermediateLabwareWell, 1);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0 && mod_seqIntermediateLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqIntermediateLabwareWell.SetMax(mod_seqIntermediateLabwareWell.GetTotal());
      mod_seqIntermediateLabwareWell.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\n3. Shaking plate for 10 minutes\n\nKenny Scan intermediate plate while moving to shaker\n\nPlate movements: Intermediate Home  --> Shaker (10 minutes) --> Magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 1);
    HHS_HELPER::Shake_Start(mod_iShakerDeviceNumber, 1500);
    if( 0 == timerShake10min.SetTimer(900) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerShake10min, Translate("Shaking plate for 15 minutes"));
    if( 0 == timerShake10min.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedShake = timerShake10min.GetElapsedTime();
    HHS_HELPER::Shake_Stop(mod_iShakerDeviceNumber);
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 0);
    MECC::TraceComment(Translate("---------------------------------\n\nMoving intermediate plate from shaker to magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("--------------------------------------------------------------\n\n4. Magnetic bead separation and supernatant discard\n\n--------------------------------------------------------------"));
    if( 0 == timerBeadSeparation.SetTimer(mod_iBeadSeparationTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerBeadSeparation, Translate("Letting magnetic beads separate"));
    if( 0 == timerBeadSeparation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedBeadSeparation = timerBeadSeparation.GetElapsedTime();
    {
      loopCounter1_5 = 0;
      while (
         (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqMagstandLabwareWell, 1);
        loopCounter1_5 = loopCounter1_5 + 1;
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, -9, 0, 0);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, 9, 0, 0);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0 && mod_seqMagstandLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqMagstandLabwareWell.SetMax(mod_seqMagstandLabwareWell.GetTotal());
      mod_seqMagstandLabwareWell.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\nPlate movements: Magstand --> Intermediate Home\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("--------------------------------------------\n\n1. Add equal volume 95-100% ethanol to equal volume of lysed sample\n\n--------------------------------------------"));
    {
      while (
         (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqIntermediateLabwareWell, 1);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0 && mod_seqIntermediateLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqIntermediateLabwareWell.SetMax(mod_seqIntermediateLabwareWell.GetTotal());
      mod_seqIntermediateLabwareWell.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\n3. Shaking plate for 10 minutes\n\nKenny Scan intermediate plate while moving to shaker\n\nPlate movements: Intermediate Home  --> Shaker (10 minutes) --> Magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 1);
    HHS_HELPER::Shake_Start(mod_iShakerDeviceNumber, 1500);
    if( 0 == timerShake10min.SetTimer(900) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerShake10min, Translate("Shaking plate for 15 minutes"));
    if( 0 == timerShake10min.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedShake = timerShake10min.GetElapsedTime();
    HHS_HELPER::Shake_Stop(mod_iShakerDeviceNumber);
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 0);
    MECC::TraceComment(Translate("---------------------------------\n\nMoving intermediate plate from shaker to magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("--------------------------------------------------------------\n\n4. Magnetic bead separation and supernatant discard\n\n--------------------------------------------------------------"));
    if( 0 == timerBeadSeparation.SetTimer(mod_iBeadSeparationTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerBeadSeparation, Translate("Letting magnetic beads separate"));
    if( 0 == timerBeadSeparation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedBeadSeparation = timerBeadSeparation.GetElapsedTime();
    {
      loopCounter1_5 = 0;
      while (
         (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqMagstandLabwareWell, 1);
        loopCounter1_5 = loopCounter1_5 + 1;
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, -9, 0, 0);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, 9, 0, 0);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0 && mod_seqMagstandLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqMagstandLabwareWell.SetMax(mod_seqMagstandLabwareWell.GetTotal());
      mod_seqMagstandLabwareWell.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\nPlate movements: Magstand --> Intermediate Home\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("--------------------------------------------\n\n1. Add equal volume 95-100% ethanol to equal volume of lysed sample\n\n--------------------------------------------"));
    {
      while (
         (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqIntermediateLabwareWell, 1);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0 && mod_seqIntermediateLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqIntermediateLabwareWell.SetMax(mod_seqIntermediateLabwareWell.GetTotal());
      mod_seqIntermediateLabwareWell.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\n3. Shaking plate for 10 minutes\n\nKenny Scan intermediate plate while moving to shaker\n\nPlate movements: Intermediate Home  --> Shaker (10 minutes) --> Magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 1);
    HHS_HELPER::Shake_Start(mod_iShakerDeviceNumber, 1500);
    if( 0 == timerShake10min.SetTimer(900) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerShake10min, Translate("Shaking plate for 15 minutes"));
    if( 0 == timerShake10min.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedShake = timerShake10min.GetElapsedTime();
    HHS_HELPER::Shake_Stop(mod_iShakerDeviceNumber);
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 0);
    MECC::TraceComment(Translate("---------------------------------\n\nMoving intermediate plate from shaker to magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("--------------------------------------------------------------\n\n4. Magnetic bead separation and supernatant discard\n\n--------------------------------------------------------------"));
    if( 0 == timerBeadSeparation.SetTimer(mod_iBeadSeparationTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerBeadSeparation, Translate("Letting magnetic beads separate"));
    if( 0 == timerBeadSeparation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedBeadSeparation = timerBeadSeparation.GetElapsedTime();
    {
      loopCounter1_5 = 0;
      while (
         (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqMagstandLabwareWell, 1);
        loopCounter1_5 = loopCounter1_5 + 1;
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, -9, 0, 0);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, 9, 0, 0);
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0 && mod_seqMagstandLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqMagstandLabwareWell.SetMax(mod_seqMagstandLabwareWell.GetTotal());
      mod_seqMagstandLabwareWell.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\nPlate movements: Magstand --> Intermediate Home\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("-----------------------------------------\n\n20. Heating at 55C for 10min\n\n-----------------------------------------"));
    Fork_Join::JoinThread(fork_Preheat);
    MECC::TraceComment(Translate("---------------------------------\n\nPlate movements: Intermediate --> Heater shaker\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    if( 0 == timerHeater.SetTimer(600) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerHeater, Translate("Heating plate"));
    if( 0 == timerHeater.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedHeater = timerHeater.GetElapsedTime();
    HHS_HELPER::Temp_Control_End(mod_iShakerDeviceNumber);
    MECC::TraceComment(Translate("---------------------------------\n\nMoving intermediate plate from shaker to magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("--------------------------------------------\n\n21. Add Elution buffer\n\n--------------------------------------------"));
    {
      loopCounterStep1_17 = 0;
      while (
         (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqIntermediateLabwareWell, 1, mod_seqReagent_Col7_ElutionBx_T16_P4, 1);
        loopCounterStep1_17 = loopCounterStep1_17 + 1;
        TrcTrace(mod_iElutionVolume, mod_iAddedElutionVolume);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (mod_seqIntermediateLabwareWell.GetCurrentPosition() > 0 && mod_seqIntermediateLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqIntermediateLabwareWell.SetMax(mod_seqIntermediateLabwareWell.GetTotal());
      mod_seqReagent_Col7_ElutionBx_T16_P4.SetMax(mod_seqReagent_Col7_ElutionBx_T16_P4.GetTotal());
      mod_seqIntermediateLabwareWell.SetCurrentPosition(1);
      mod_seqReagent_Col7_ElutionBx_T16_P4.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("---------------------------------\n\n22. Shaking plate for 5 minutes\n\nMoving from intermediate home --> shaker (5min) --> magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 1);
    HHS_HELPER::Shake_Start(mod_iShakerDeviceNumber, 1500);
    if( 0 == timerShake10min.SetTimer(300) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerShake10min, Translate("Shaking plate for 5 minute"));
    if( 0 == timerShake10min.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedShake = timerShake10min.GetElapsedTime();
    HHS_HELPER::Shake_Stop(mod_iShakerDeviceNumber);
    HHS_HELPER::Set_Plate_Lock(mod_iShakerDeviceNumber, 0);
    MECC::TraceComment(Translate("---------------------------------\n\nMoving intermediate plate from shaker to magstand\n\n---------------------------------"));
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment(Translate("----------------------------------------\n\n23. Magnetic bead separation and supernatant discard\n\n----------------------------------------"));
    if( 0 == timerBeadSeparation.SetTimer(mod_iBeadSeparationTime) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    NYSCF_UTILITYLIBRARY::TimerSetDisplayName(timerBeadSeparation, Translate("Letting magnetic beads separate"));
    if( 0 == timerBeadSeparation.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    mod_fTimerElapsedBeadSeparation = timerBeadSeparation.GetElapsedTime();
    {
      loopCounter1_19 = 0;
      mod_seqDestinationLabwareWell.SetCurrentPosition(1);
      mod_seqMagstandLabwareWell.SetCurrentPosition(1);
      mod_seqTipWaste.SetCurrentPosition(1);
      while (
         (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, mod_seqDestinationLabwareWell, 1, mod_seqMagstandLabwareWell, 1, mod_seqTipWaste, 1);
        loopCounter1_19 = loopCounter1_19 + 1;
        VIRTUALLABWARE::MoveSeq(ML_STAR, mod_seqLiquidWaste, -9, 0, 0);
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (mod_seqMagstandLabwareWell.GetCurrentPosition() > 0 && mod_seqMagstandLabwareWell.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      mod_seqDestinationLabwareWell.SetMax(mod_seqDestinationLabwareWell.GetTotal());
      mod_seqMagstandLabwareWell.SetMax(mod_seqMagstandLabwareWell.GetTotal());
      mod_seqTipWaste.SetMax(mod_seqTipWaste.GetTotal());
      mod_seqDestinationLabwareWell.SetCurrentPosition(1);
      mod_seqMagstandLabwareWell.SetCurrentPosition(1);
      mod_seqTipWaste.SetCurrentPosition(1);
    }
    if (mod_bResumeMethod == 0)
    {
      MECC::TraceComment(Translate("----------\n\nGenerate mapping file\n\n---------"));
      STCC::SetElementBarcodeForSequencePos(ML_STAR, mod_seqMagstandLabwareWell, -1, hslTrue, mod_sDestinationLabwareBarcode);
      {
        for(loopCounterIntToMagMapIndex = 0; loopCounterIntToMagMapIndex < mod_iNumberSamples;)
        {
          loopCounterIntToMagMapIndex = loopCounterIntToMagMapIndex + 1;
          temp_IntermediateWellNum = mod_arrSourceWells.ElementAt( loopCounterIntToMagMapIndex -1);
          temp_IntermediateWellNum = APPSLIB::AlphaNumConversion(1, temp_IntermediateWellNum, 96);
          Util2::VarArrCheckIndex(mod_arrSourceTubeBarcodes, loopCounterIntToMagMapIndex, "mod_arrSourceTubeBarcodes");
          STCC::SetElementBarcodeForSequencePos(ML_STAR, mod_seqMagstandLabwareWell, temp_IntermediateWellNum, hslFalse, mod_arrSourceTubeBarcodes.ElementAt(loopCounterIntToMagMapIndex-1));
        }
      }
      mod_sIntToDestMappingFileKeyword = StrConcat8(mod_sIntToDestMappingFileKeyword, Translate("_"), Date, Translate(""), Translate(""), Translate(""), Translate(""), Translate(".xls"));
      {
        for(loopCounterIntToDestMapIndex = 0; loopCounterIntToDestMapIndex < mod_iNumberSamples;)
        {
          loopCounterIntToDestMapIndex = loopCounterIntToDestMapIndex + 1;
          temp_DestinationWellNum = mod_arrDestinationWells.ElementAt( loopCounterIntToDestMapIndex -1);
          temp_DestinationWellNum = APPSLIB::AlphaNumConversion(1, temp_DestinationWellNum, 96);
          Util2::VarArrCheckIndex(mod_arrDestinationTubeBarcodesEasyCode, loopCounterIntToDestMapIndex, "mod_arrDestinationTubeBarcodesEasyCode");
          STCC::SetElementBarcodeForSequencePos(ML_STAR, mod_seqDestinationLabwareWell, temp_DestinationWellNum, hslFalse, mod_arrDestinationTubeBarcodesEasyCode.ElementAt(loopCounterIntToDestMapIndex-1));
        }
      }
      STCC::ResetFilterSequences();
      STCC::AddFilterSequence(ML_STAR, mod_seqMagstandLabwareWell);
      {
        variable _FilterIdsArray_26[];
        variable _ColumnIdsArray_26[];
        variable _ColumnNamesArray_26[];
        variable _ExperimentsArray_26[];
        _FilterIdsArray_26.SetSize(0);
        _ColumnNamesArray_26.SetSize(11);
        _ColumnIdsArray_26.SetSize(11);
        _ColumnNamesArray_26.SetAt(0, "RecordId");
        _ColumnIdsArray_26.SetAt(0, 0);
        _ColumnNamesArray_26.SetAt(1, "TRackBC");
        _ColumnIdsArray_26.SetAt(1, 1);
        _ColumnNamesArray_26.SetAt(2, "TLabwareId");
        _ColumnIdsArray_26.SetAt(2, 2);
        _ColumnNamesArray_26.SetAt(3, "TPositionId");
        _ColumnIdsArray_26.SetAt(3, 3);
        _ColumnNamesArray_26.SetAt(4, "TPositionBC");
        _ColumnIdsArray_26.SetAt(4, 4);
        _ColumnNamesArray_26.SetAt(5, "SRackBC");
        _ColumnIdsArray_26.SetAt(5, 8);
        _ColumnNamesArray_26.SetAt(6, "SLabwareId");
        _ColumnIdsArray_26.SetAt(6, 9);
        _ColumnNamesArray_26.SetAt(7, "SPositionId");
        _ColumnIdsArray_26.SetAt(7, 10);
        _ColumnNamesArray_26.SetAt(8, "SPositionBC");
        _ColumnIdsArray_26.SetAt(8, 11);
        _ColumnNamesArray_26.SetAt(9, "ActionDateTime");
        _ColumnIdsArray_26.SetAt(9, 12);
        _ColumnNamesArray_26.SetAt(10, "UserName");
        _ColumnIdsArray_26.SetAt(10, 13);
        _ExperimentsArray_26.SetSize(0);
        STCC::GenerateMappingFileV43Ex1(ML_STAR, mod_seqDestinationLabwareWell, 1, _FilterIdsArray_26, 0, _ColumnIdsArray_26, _ColumnNamesArray_26, _ExperimentsArray_26, mod_sIntToDestMappingFileKeyword, 0, 0, mod_sMappingFileDirectory, 1);
      }
    }
    TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000ulHighVolumeTip"), ML_STAR);
    TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTip, Translate("300ulStandardVolumeTip"), ML_STAR);
    HHS_HELPER::Terminate();
    HHS_HELPER::_ExitLibrary();
    NYSCF_SYSTEMLOCALIZATION::_ExitLibrary();
    NYSCF_UTILITYLIBRARY::_ExitLibrary();
    STRTOKENIZE::_ExitLibrary();
    EASYCODEII_HELPER::_ExitLibrary();
    NYSCF_SCANBARCODE::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
  } }
