private function PreHeatShaker(  ) void ;
private function StageTipsChannels( sequence & io_seqTipInput, sequence & io_seqTipStagingDestination, sequence & io_seqTipStagingPattern ) void ;
private function getArrayMeanAndStandardDeviation( variable & gam_ArrayOfNumbers[], variable & gam_Mean, variable & gam_STD, variable & gam_Size ) variable ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000ulHighVolumeTip"), ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTip, Translate("300ulStandardVolumeTip"), ML_STAR);
}

private function PreHeatShaker(  ) void {
  MECC::TraceComment(Translate("--------------------\n\nStarting to preheat shaker\n\n--------------------"));
  HHS_HELPER::Temp_Control_Start(mod_iShakerDeviceNumber, 55, 1);
  HHS_HELPER::Temp_Control_Wait(mod_iShakerDeviceNumber);
}

private function StageTipsChannels( sequence & io_seqTipInput, sequence & io_seqTipStagingDestination, sequence & io_seqTipStagingPattern ) void {
  private variable stc_iSeqCurrentPosition;
  private variable stc_sChannelVariable;
  private variable stc_sPositionID;
  private variable stc_sLabwareIDStaging;
  private sequence stc_seqTipStagingDestination;
  TrcFormatTrace12(Translate(""), Translate("StageTipsChannels"), 1, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  Util2::Debug::TraceSequence(io_seqTipStagingPattern);
  stc_iSeqCurrentPosition = io_seqTipStagingPattern.GetCurrentPosition();
  SeqRemoveAll(stc_seqTipStagingDestination);
  stc_sLabwareIDStaging = SeqGetLabwareId(io_seqTipStagingDestination);
  {
    io_seqTipStagingPattern.SetCurrentPosition(1);
    while (
       (io_seqTipStagingPattern.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, io_seqTipStagingPattern, 1, stc_seqTipStagingDestination, 1);
      stc_sPositionID = SeqGetPositionId(io_seqTipStagingPattern);
      SeqAdd(stc_seqTipStagingDestination, stc_sLabwareIDStaging, stc_sPositionID);
      SeqIncrement(io_seqTipStagingPattern, 1);
      if (
         (io_seqTipStagingPattern.GetCurrentPosition() > 0 && io_seqTipStagingPattern.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    io_seqTipStagingPattern.SetMax(io_seqTipStagingPattern.GetTotal());
    stc_seqTipStagingDestination.SetMax(stc_seqTipStagingDestination.GetTotal());
    io_seqTipStagingPattern.SetCurrentPosition(1);
    stc_seqTipStagingDestination.SetCurrentPosition(1);
  }
  {
    while (
       (stc_seqTipStagingDestination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, stc_seqTipStagingDestination, 1);
      stc_sChannelVariable = NYSCF_UTILITYLIBRARY::GenerateChannelVariable(stc_seqTipStagingDestination);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (stc_seqTipStagingDestination.GetCurrentPosition() > 0 && stc_seqTipStagingDestination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    stc_seqTipStagingDestination.SetMax(stc_seqTipStagingDestination.GetTotal());
  }
  io_seqTipStagingPattern.SetCurrentPosition(stc_iSeqCurrentPosition);
}

private function getArrayMeanAndStandardDeviation( variable & gam_ArrayOfNumbers[], variable & gam_Mean, variable & gam_STD, variable & gam_Size ) variable {
  private variable gam_ArraySize;
  private variable MeanCalculatorLoopCounter;
  private variable STDCalculatorLoopCounter;
  private variable gam_item;
  private variable gam_X;
  private variable gam_RunningTotal;
  private variable gam_itemType;
  private variable gam_RunningXTotal;
  gam_Mean = 0;
  gam_STD = 0;
  gam_Size = 0;
  gam_ArraySize=gam_ArrayOfNumbers.GetSize();
  gam_RunningTotal = 0;
  {
    for(MeanCalculatorLoopCounter = 0; MeanCalculatorLoopCounter < gam_ArraySize;)
    {
      MeanCalculatorLoopCounter = MeanCalculatorLoopCounter + 1;
      gam_item = gam_ArrayOfNumbers.ElementAt( MeanCalculatorLoopCounter -1);
      gam_itemType = StrGetType(gam_item);
      if (gam_itemType == "f")
      {
        gam_item = MthCeiling(gam_item);
      }
      if (gam_itemType == "s")
      {
        gam_item = StrIVal(gam_item);
      }
      gam_RunningTotal = gam_RunningTotal + gam_item;
    }
  }
  gam_Mean = gam_RunningTotal / (gam_ArraySize * 1.0);
  gam_RunningXTotal = 0;
  {
    for(STDCalculatorLoopCounter = 0; STDCalculatorLoopCounter < gam_ArraySize;)
    {
      STDCalculatorLoopCounter = STDCalculatorLoopCounter + 1;
      gam_item = gam_ArrayOfNumbers.ElementAt( MeanCalculatorLoopCounter -1);
      gam_itemType = StrGetType(gam_item);
      if (gam_itemType == "f")
      {
        gam_item = MthCeiling(gam_item);
      }
      if (gam_itemType == "s")
      {
        gam_item = StrIVal(gam_item);
      }
      gam_X = gam_item - gam_Mean;
      gam_X = gam_X / (gam_X * 1.0);
      gam_RunningXTotal = gam_RunningXTotal + gam_X;
    }
  }
  gam_STD = gam_RunningXTotal / (gam_ArraySize * 1.0);
  gam_STD = MthPow(gam_STD, 0.5);
  return (gam_Mean);
  return (gam_STD);
  return (gam_ArraySize);
}
