private function PreHeatShaker(  ) void ;
private function StageTipsChannels( sequence & io_seqTipInput, sequence & io_seqTipStagingDestination, sequence & io_seqTipStagingPattern ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  TipCount::Write2(ML_STAR.MlStar1000ulHighVolumeTip, Translate("1000ulHighVolumeTip"), ML_STAR);
  TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTip, Translate("300ulStandardVolumeTip"), ML_STAR);
  if( 0 != WorkList.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  WorkList.RemoveFields();
}

private function PreHeatShaker(  ) void {
  MECC::TraceComment(Translate("--------------------\n\nStarting to preheat shaker\n\n--------------------"));
  HHS_HELPER::Temp_Control_Start(mod_iShakerDeviceNumber, 55, 1);
  HHS_HELPER::Temp_Control_Wait(mod_iShakerDeviceNumber);
}

private function StageTipsChannels( sequence & io_seqTipInput, sequence & io_seqTipStagingDestination, sequence & io_seqTipStagingPattern ) void {
  private variable stc_iSeqCurrentPosition;
  private variable stc_sChannelVariable;
  private variable stc_sPositionID;
  private variable stc_sLabwareIDStaging;
  private sequence stc_seqTipStagingDestination;
  TrcFormatTrace12(Translate(""), Translate("StageTipsChannels"), 1, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  Util2::Debug::TraceSequence(io_seqTipStagingPattern);
  stc_iSeqCurrentPosition = io_seqTipStagingPattern.GetCurrentPosition();
  SeqRemoveAll(stc_seqTipStagingDestination);
  stc_sLabwareIDStaging = SeqGetLabwareId(io_seqTipStagingDestination);
  {
    io_seqTipStagingPattern.SetCurrentPosition(1);
    while (
       (io_seqTipStagingPattern.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, io_seqTipStagingPattern, 1, stc_seqTipStagingDestination, 1);
      stc_sPositionID = SeqGetPositionId(io_seqTipStagingPattern);
      SeqAdd(stc_seqTipStagingDestination, stc_sLabwareIDStaging, stc_sPositionID);
      SeqIncrement(io_seqTipStagingPattern, 1);
      if (
         (io_seqTipStagingPattern.GetCurrentPosition() > 0 && io_seqTipStagingPattern.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    io_seqTipStagingPattern.SetMax(io_seqTipStagingPattern.GetTotal());
    stc_seqTipStagingDestination.SetMax(stc_seqTipStagingDestination.GetTotal());
    io_seqTipStagingPattern.SetCurrentPosition(1);
    stc_seqTipStagingDestination.SetCurrentPosition(1);
  }
  {
    while (
       (stc_seqTipStagingDestination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, stc_seqTipStagingDestination, 1);
      stc_sChannelVariable = NYSCF_UTILITYLIBRARY::GenerateChannelVariable(stc_seqTipStagingDestination);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (stc_seqTipStagingDestination.GetCurrentPosition() > 0 && stc_seqTipStagingDestination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    stc_seqTipStagingDestination.SetMax(stc_seqTipStagingDestination.GetTotal());
  }
  io_seqTipStagingPattern.SetCurrentPosition(stc_iSeqCurrentPosition);
}
